<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>23459421</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>2448</drw:Width>
            <drw:Height>2048</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>3</drw:Channels>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Image" Selector="Item1" />
        </PropertyMappings>
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:AddImage">
          <drw:Destination>
            <drw:X>0</drw:X>
            <drw:Y>0</drw:Y>
            <drw:Width>0</drw:Width>
            <drw:Height>0</drw:Height>
          </drw:Destination>
          <drw:Interpolation>Linear</drw:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:Circle">
          <drw:Center>
            <drw:X>1224</drw:X>
            <drw:Y>1024</drw:Y>
          </drw:Center>
          <drw:Radius>15</drw:Radius>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>255</drw:Val3>
          </drw:Color>
          <drw:Thickness>5</drw:Thickness>
          <drw:LineType>Connected8</drw:LineType>
          <drw:Shift>0</drw:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:Line">
          <drw:Start>
            <drw:X>1229</drw:X>
            <drw:Y>1024</drw:Y>
          </drw:Start>
          <drw:End>
            <drw:X>1219</drw:X>
            <drw:Y>1024</drw:Y>
          </drw:End>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>255</drw:Val3>
          </drw:Color>
          <drw:Thickness>1</drw:Thickness>
          <drw:LineType>Connected8</drw:LineType>
          <drw:Shift>0</drw:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:Line">
          <drw:Start>
            <drw:X>1224</drw:X>
            <drw:Y>1029</drw:Y>
          </drw:Start>
          <drw:End>
            <drw:X>1224</drw:X>
            <drw:Y>1019</drw:Y>
          </drw:End>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>255</drw:Val3>
          </drw:Color>
          <drw:Thickness>1</drw:Thickness>
          <drw:LineType>Connected8</drw:LineType>
          <drw:Shift>0</drw:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropCenter">
          <cv:Size>
            <cv:Width>256</cv:Width>
            <cv:Height>256</cv:Height>
          </cv:Size>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>