<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0-preview1+76e8ce94db5dd636925244a720164ef8694af513"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Chunks and logs a timestamped harp data stream, splitting initial state and registers into separate files.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessageType">
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType>Read</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LogName" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LogHarp</Name>
        <Description>Chunks and logs a timestamped harp data stream into the base data log.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="LogName" Description="The base name of the data log, without extension." />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LogHarp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Path" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path />
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Data</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageType</Selector>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="WorkflowProperty" TypeArguments="harp:MessageType">
                <Value>Read</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LogHarpDemux</Name>
        <Description>Chunks and logs a timestamped harp data stream into the base data log, splitting each independent register into a separate file.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Address</rx:KeySelector>
              <rx:ElementSelector />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LogName" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LogRegisters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Register</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Register</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}_{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LogName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Register</Name>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>LogHarp</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Name" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>FormatFileName</Name>
                          <Description>Generates a log filename based on the input timestamp.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>PathPrefix</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>ClockSynchronizer_8</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>bin</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="aeon:StripSubstring">
                                  <aeon:Separator>_</aeon:Separator>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}\{4}\{1}_{2}.{3}</Format>
                                <Selector>Item1,Item2,Item3,Item4,Item5</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="9" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="8" Label="Source1" />
                              <Edge From="3" To="9" Label="Source2" />
                              <Edge From="4" To="9" Label="Source3" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="9" Label="Source4" />
                              <Edge From="8" To="9" Label="Source5" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Path>devdata\2024-12-13T02-33-30\ClockSynchronizer\ClockSynchronizer_8_8.bin</dsp:Path>
                            <dsp:Suffix>None</dsp:Suffix>
                            <dsp:Overwrite>false</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="11" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="9" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\FormatFileName.bonsai">
        <Name>Cam2</Name>
        <Extension>csv</Extension>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="2" To="5" Label="Source2" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>