<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0-preview1+76e8ce94db5dd636925244a720164ef8694af513"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:Bonsai.Vision.Design;assembly=Bonsai.Vision.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>HeadTail</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item1.Item1.Velocity</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="viz:RollingGraphBuilder">
          <viz:SymbolType>None</viz:SymbolType>
          <viz:LineWidth>1</viz:LineWidth>
          <viz:Capacity xsi:nil="true" />
          <viz:Min xsi:nil="true" />
          <viz:Max xsi:nil="true" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>Math.Sqrt((it.X*it.X)+(it.Y*it.Y))</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item1.Item1.Heading</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:TableLayoutPanelBuilder">
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:ColumnCount>1</gui:ColumnCount>
          <gui:RowCount>4</gui:RowCount>
          <gui:ColumnStyles />
          <gui:RowStyles />
          <gui:CellSpans />
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraImage</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>TrackingVisualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CreateCanvas</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Size" Selector="Value.Size" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:CreateCanvas">
                      <drw:Size>
                        <drw:Width>1440</drw:Width>
                        <drw:Height>1080</drw:Height>
                      </drw:Size>
                      <drw:Depth>U8</drw:Depth>
                      <drw:Channels>4</drw:Channels>
                      <drw:Color>
                        <drw:Val0>0</drw:Val0>
                        <drw:Val1>0</drw:Val1>
                        <drw:Val2>0</drw:Val2>
                        <drw:Val3>0</drw:Val3>
                      </drw:Color>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>AddImage</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProcessingImage</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:ConvertColor">
                      <cv:Conversion>Gray2Bgra</cv:Conversion>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Size</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Image" Selector="Item2" />
                      <Property Name="Destination" Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:AddImage">
                      <drw:Destination>
                        <drw:X>0</drw:X>
                        <drw:Y>0</drw:Y>
                        <drw:Width>1440</drw:Width>
                        <drw:Height>1080</drw:Height>
                      </drw:Destination>
                      <drw:Interpolation>Linear</drw:Interpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="6" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HeadTail</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" DisplayName="NumberOfTrackingElements" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Value</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Canvas</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Value</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Value</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contour" Selector="Value.Item2.Contour" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>AddBlob</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Contour" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="drw:DrawContours">
                            <drw:ExternalColor>
                              <drw:Val0>255</drw:Val0>
                              <drw:Val1>0</drw:Val1>
                              <drw:Val2>0</drw:Val2>
                              <drw:Val3>255</drw:Val3>
                            </drw:ExternalColor>
                            <drw:HoleColor>
                              <drw:Val0>0</drw:Val0>
                              <drw:Val1>0</drw:Val1>
                              <drw:Val2>0</drw:Val2>
                              <drw:Val3>0</drw:Val3>
                            </drw:HoleColor>
                            <drw:MaxLevel>0</drw:MaxLevel>
                            <drw:Thickness>1</drw:Thickness>
                            <drw:LineType>Connected8</drw:LineType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Value</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item1.Head</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Center" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:Circle">
                      <drw:Center>
                        <drw:X>1287</drw:X>
                        <drw:Y>397</drw:Y>
                      </drw:Center>
                      <drw:Radius>1</drw:Radius>
                      <drw:Color>
                        <drw:Val0>0</drw:Val0>
                        <drw:Val1>0</drw:Val1>
                        <drw:Val2>255</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:Color>
                      <drw:Thickness>1</drw:Thickness>
                      <drw:LineType>Connected8</drw:LineType>
                      <drw:Shift>0</drw:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Value</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2.Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Center" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:Circle">
                      <drw:Center>
                        <drw:X>1285</drw:X>
                        <drw:Y>408</drw:Y>
                      </drw:Center>
                      <drw:Radius>1</drw:Radius>
                      <drw:Color>
                        <drw:Val0>0</drw:Val0>
                        <drw:Val1>255</drw:Val1>
                        <drw:Val2>0</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:Color>
                      <drw:Thickness>1</drw:Thickness>
                      <drw:LineType>Connected8</drw:LineType>
                      <drw:Shift>0</drw:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Value</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item1.Tail</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Center" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:Circle">
                      <drw:Center>
                        <drw:X>1285</drw:X>
                        <drw:Y>418</drw:Y>
                      </drw:Center>
                      <drw:Radius>1</drw:Radius>
                      <drw:Color>
                        <drw:Val0>255</drw:Val0>
                        <drw:Val1>255</drw:Val1>
                        <drw:Val2>255</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:Color>
                      <drw:Thickness>1</drw:Thickness>
                      <drw:LineType>Connected8</drw:LineType>
                      <drw:Shift>0</drw:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="18" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="22" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeLast">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:DrawCanvas" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="p1:IplImageVisualizer" />
      </Expression>
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>1</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>devdata\2024-12-16T15-40-12\Cam2\Cam2_2024-12-16T15-00-00.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="p1:FileCaptureVisualizer" />
      </Expression>
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>1</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>