<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0-preview1+76e8ce94db5dd636925244a720164ef8694af513"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:p2="clr-namespace:Harp.CameraControllerGen2;assembly=Harp.CameraControllerGen2"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>MotorControl</Name>
              <Description> Serial control of the motor</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:CreateSerialPort">
                      <port:Name>LoomDevice</port:Name>
                      <port:PortName>COM8</port:PortName>
                      <port:BaudRate>1000000</port:BaudRate>
                      <port:NewLine>\r\n</port:NewLine>
                      <port:Parity>None</port:Parity>
                      <port:ParityReplace>63</port:ParityReplace>
                      <port:DataBits>8</port:DataBits>
                      <port:StopBits>One</port:StopBits>
                      <port:Handshake>None</port:Handshake>
                      <port:DiscardNull>false</port:DiscardNull>
                      <port:DtrEnable>true</port:DtrEnable>
                      <port:RtsEnable>false</port:RtsEnable>
                      <port:ReadBufferSize>4096</port:ReadBufferSize>
                      <port:WriteBufferSize>2048</port:WriteBufferSize>
                      <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
                    <rx:Name>MotorCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWriteLine">
                      <port:PortName>LoomDevice</port:PortName>
                      <port:NewLine>\n</port:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>Drop</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>DROP</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>MotorCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialReadLine">
                      <port:PortName>LoomDevice</port:PortName>
                      <port:NewLine>\n</port:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:RemoveEOL" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="scr:ExpressionTransform">
                      <scr:Expression>new( it.Remove(it.Lenght-1) as Message)</scr:Expression>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="scr:ExpressionTransform">
                      <scr:Expression>new( it.Replace("\n",String.Empty) as Message)</scr:Expression>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>MotorEvents</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>TriggerMotorParameters</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="(MicrosteppingCompensation)" Category="MotorParameters" />
                    <Property Name="(BrakeEngageDelay)" Category="MotorParameters" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>MotorParameters</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Command" Category="Command" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>MotorParameters</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="(MicrosteppingCompensation)" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>4</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="(BrakeEngageDelay)" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>500</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Sample" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0};{1};{2}</Format>
                          <Selector>Item1,Item2,Item3</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="6" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source3" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>MotorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>TriggerMotorDropParameters</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="MinVelocity" DisplayName="DropMinVelocity" Category="DropMotorParameters" />
                    <Property Name="MaxVelocity" DisplayName="DropMaxVelocity" Category="DropMotorParameters" />
                    <Property Name="Acceleration" DisplayName="DropAcceleration" Category="DropMotorParameters" />
                    <Property Name="Deceleration" DisplayName="DropDeceleration" Category="DropMotorParameters" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\MotorMovementMessage.bonsai">
                    <Command>DropMotorParameters</Command>
                    <MinVelocity>31</MinVelocity>
                    <MaxVelocity>32767</MaxVelocity>
                    <Acceleration>4000</Acceleration>
                    <Deceleration>20000</Deceleration>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>MotorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>TriggerMotorResetParameters</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="MinVelocity" DisplayName="ResetMinVelocity" Category="ResetMovementParameters" />
                    <Property Name="MaxVelocity" DisplayName="ResetMaxVelocity" Category="ResetMovementParameters" />
                    <Property Name="Acceleration" DisplayName="ResetAcceleration" Category="ResetMovementParameters" />
                    <Property Name="Deceleration" DisplayName="ResetDeceleration" Category="ResetMovementParameters" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\MotorMovementMessage.bonsai">
                    <Command>ResetMotorParameters</Command>
                    <MinVelocity>31</MinVelocity>
                    <MaxVelocity>150</MaxVelocity>
                    <Acceleration>500</Acceleration>
                    <Deceleration>500</Deceleration>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>MotorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>TriggerLoomParameters</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="(DropDistance)" Category="LoomParameters" />
                    <Property Name="(BottomPause)" Category="LoomParameters" />
                    <Property Name="(InterDropInterval)" Category="LoomParameters" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LoomParameters</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Command" Category="Command" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>LoomParameters</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="(DropDistance)" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>775</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="(BottomPause)" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>5000</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="(InterDropInterval)" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1000</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Sample" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0};{1};{2};{3}</Format>
                          <Selector>Item1,Item2,Item3,Item4</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="8" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="8" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="8" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source4" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>MotorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>TriggerReset</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>M;-3100</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>MotorCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="18" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="20" To="22" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="26" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:CameraController.bonsai">
              <PortName>COM7</PortName>
              <GlobalTriggerFrequency>50</GlobalTriggerFrequency>
              <LocalTriggerFrequency>125</LocalTriggerFrequency>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Clock</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:TimestampGenerator.bonsai">
                    <PortName>COM9</PortName>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                    <TriggerSource>GlobalTrigger</TriggerSource>
                    <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                    <ExposureTime>INF</ExposureTime>
                    <SerialNumber>23391015</SerialNumber>
                    <Gain>0</Gain>
                    <Binning>1</Binning>
                    <FrameEvents>Cam1FrameEvents</FrameEvents>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera1Image</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                    <TriggerSource>GlobalTrigger</TriggerSource>
                    <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                    <ExposureTime>INF</ExposureTime>
                    <SerialNumber>23391028</SerialNumber>
                    <Gain>0</Gain>
                    <Binning>1</Binning>
                    <FrameEvents>Cam2FrameEvents</FrameEvents>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera2Image</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ControlPanel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera1Image</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera2Image</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>1</viz:ColumnCount>
              <viz:RowCount>2</viz:RowCount>
              <viz:ColumnStyles />
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Alt</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartCameras</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift Alt</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StopCameras</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Control</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TriggerMotorParameters</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton D Control</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Drop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton A Control</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TriggerMotorDropParameters</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton ShiftKey Menu B P R Control</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TriggerMotorResetParameters</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton Back Clear D H L Control</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TriggerLoomParameters</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift Alt</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TriggerReset</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logger</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ChunkSize" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogController</Name>
              <Description>Specifies default parameters for managing data logs.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Path" Description="The root folder on which to log all data." />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="io:GetFiles,sys:String">
                    <MemberName>Path</MemberName>
                    <Value>devdata</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.UtcDateTime</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:FormatDate" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="ChunkSize" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="aeon:GroupByTime,sys:Int32">
                    <MemberName>ChunkSize</MemberName>
                    <Value>1</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ChunkSize</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEvents</Name>
            </Expression>
            <Expression xsi:type="p2:Parse">
              <harp:Register xsi:type="p2:TimestampedCam0Event" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MotorCommands</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\LogMotor.bonsai">
                <Name>MotorCommands</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MotorEvents</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\LogMotor.bonsai">
                <Name>MotorEvents</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SynchronizerEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>ClockSynchronizer</LogName>
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>VideoController</LogName>
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam1FrameEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>Cam1</LogName>
              <FrameRate>50</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam2FrameEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>Cam2</LogName>
              <FrameRate>50</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MotorCommands</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
  "Command" as Type,
  it as Content
)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MotorEvents</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
  "Event" as Type,
  it as Content
)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>Motor</LogName>
              <Selector />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseId" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>MouseID</LogName>
              <Selector />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="22" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="33" Label="Source1" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>