<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Exports the current arena metadata.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>PathPrefix</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="WorkflowName" Description="The path to the workflow for which to export metadata." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Exp0-PHIELDS01.bonsai</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>..\..\calibration\metadata.py {1} --output {0}\Metadata.yml --indent 2</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Arguments" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:StartProcess">
          <io:FileName>..\..\.venv\Scripts\python.exe</io:FileName>
          <io:Arguments>..\..\calibration\metadata.py Exp0-PHIELDS01.bonsai --output D:\Tests\exp0-prototype-dev-d3d8a0a\2025-04-22T14-53-53\Metadata.yml --indent 2</io:Arguments>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>NotZero</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:ThrowException">
          <aeon:Message>Error exporting workflow metadata.</aeon:Message>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>