<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GroupByTimeStreamId</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SourceStreamID</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>source</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StreamId</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>source</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChunkSize</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ChunkSize" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:GroupByTime">
                <aeon:ChunkSize>1</aeon:ChunkSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StreamId</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>source</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>source</Name>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>SaveVideo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>source</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>FormatVideoParameters</Name>
                    <Description>Generates a log filename based on the input timestamp.
And a framerate</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PathPrefix</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>source</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>source</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="aeon:FormatDate" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}\{1}\{1}_{2}</Format>
                          <Selector>Item1,Item2,Item3</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="7" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source3" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>FileName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>source</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FileName</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="StringProperty">
                      <Value>.csv</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>D:\Tests\exp0-prototype-dev-d3d8a0a\2025-04-28T22-38-37\CameraTop\CameraTop_2025-04-28T22-00-00.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FileName</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="StringProperty">
                      <Value>.avi</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>source</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>D:\Tests\exp0-prototype-dev-d3d8a0a\2025-04-28T22-38-37\CameraTop\CameraTop_2025-04-28T22-00-00.avi</cv:FileName>
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>50</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="12" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="20" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="20" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source3" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>