WorkflowBuilder(Version=2.8.5)
GroupWorkflow Devices
    GroupWorkflow HardwareDevices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> GroupWorkflow TimestampGenerator(Description="Provides support for uninterruptible synchronization of all arena Harp devices and setting the UTC time reference.")
                BehaviorSubject<System.Object> SynchronizeTimestamp
                -> Bonsai.Harp.SynchronizeTimestamp => #1
                ExternalizedMapping(PortName) => #2
                #1, #2 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM9)
                -> MulticastSubject SynchronizerEvents
                -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.TimestampSeconds)
                -> MulticastSubject Heartbeats
                -> WorkflowOutput
            -> WorkflowOutput

            PublishSubject<Bonsai.Harp.HarpMessage> SynchronizerEvents
            PublishSubject<Bonsai.Harp.HarpMessage> Heartbeats

        GroupWorkflow VideoController
            GroupWorkflow ConfigurePwmCam0 => #0
                Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateConfigureCam0EventPayload(ConfigureCam0Event=EventOnTrigger)) => #0
                Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateTriggerConfigCam0Payload(TriggerConfigCam0=Internal)) => #1
                ExternalizedMapping(Value(DisplayName=Frequency))
                -> IntProperty(Value=50)
                -> Take(Count=1)
                -> Harp.CameraControllerGen2.Format(MessageType=Write, Register=Harp.CameraControllerGen2.TriggerFrequencyCam0) => #5
                #0, #1, #5 -> Concat
                -> WorkflowOutput
            GroupWorkflow ConfigurePwmCam1 => #1
                Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateConfigureCam1EventPayload(ConfigureCam1Event=EventOnTrigger)) => #0
                Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateTriggerConfigCam1Payload(TriggerConfigCam1=Internal)) => #1
                ExternalizedMapping(Value(DisplayName=Frequency))
                -> IntProperty(Value=125)
                -> Take(Count=1)
                -> Harp.CameraControllerGen2.Format(MessageType=Write, Register=Harp.CameraControllerGen2.TriggerFrequencyCam1) => #5
                #0, #1, #5 -> Concat
                -> WorkflowOutput
            SubscribeSubject StartCameras
            -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateStartAndStopPayload(StartAndStop="StartCam0 StartCam1")) => #3
            SubscribeSubject StopCameras
            -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateStartAndStopPayload(StartAndStop="StopCam0 StopCam1")) => #5
            #0, #1, #3, #5 -> Merge => #6
            ExternalizedMapping(PortName) => #7
            #6, #7 -> Harp.CameraControllerGen2.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM7)
            -> MulticastSubject CameraControllerEvents => #9
            -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.TimestampedCam0Event)
            -> Condition TriggerEvent
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> HasFlag(Operand=WorkflowProperty<Harp.CameraControllerGen2.CameraEvents>(Value=Trigger))
                -> WorkflowOutput
            -> PublishSubject Trigger0
            #9 -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.TimestampedCam1Event)
            -> Condition TriggerEvent
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> HasFlag(Operand=WorkflowProperty<Harp.CameraControllerGen2.CameraEvents>(Value=Trigger))
                -> WorkflowOutput
            -> PublishSubject Trigger1
            #9 -> WorkflowOutput

            SubscribeSubject Trigger0
            BehaviorSubject<System.Object> StartCameras
            BehaviorSubject<System.Object> StopCameras
            PublishSubject<Bonsai.Harp.HarpMessage> CameraControllerEvents

        GroupWorkflow Cameras
            SubscribeSubject Trigger0
            -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=23425449, ColorProcessing=Default, ExposureTime=10000, Gain=1, Binning=1)
            -> PublishSubject CameraEvents

        GroupWorkflow BehaviorBoard
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort0))
            -> MulticastSubject BehaviorBoardCommands

            BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorBoardCommands
            -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM13)
            -> Harp.Behavior.FilterRegister(FilterType=Exclude, Register=Harp.Behavior.AnalogData)
            -> PublishSubject BehaviorBoardEvents
            -> WorkflowOutput

            BehaviorSubject<System.Object> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject BehaviorBoardCommands

            BehaviorSubject<System.UInt16> PulseSupplyPayload
            -> InputMapping(PulseSupplyPort0(Selector=it))
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort0Payload(PulseSupplyPort0=1000))
            -> MulticastSubject BehaviorBoardCommands

        GroupWorkflow Loom
            BooleanProperty(Value=false)
            -> BehaviorSubject LoomSequenceActive

            SubscribeSubject Events
            -> First
            -> Delay(DueTime=PT0.1S)
            -> SelectMany InitializeMovementSettings(Description=GroupName)
                WorkflowInput Source1
                -> Disable GroupWorkflow BrakeLock
                    WorkflowInput Source1
                    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                -> GroupWorkflow DisableMotor
                    WorkflowInput Source1
                    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
                    -> MulticastSubject Commands
                    -> WorkflowOutput
                -> GroupWorkflow DisableAnalog
                    WorkflowInput Source1
                    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableAnalogInput))
                    -> MulticastSubject Commands
                    -> WorkflowOutput
                -> GroupWorkflow EnableHoming
                    WorkflowInput Source1
                    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableHoming))
                    -> MulticastSubject Commands
                    -> WorkflowOutput
                -> GroupWorkflow SetHomingVelocity => #5
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(HomeVelocity) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateHomeVelocityPayload(HomeVelocity=200))
                    -> MulticastSubject Commands
                    -> WorkflowOutput
                Disable ExternalizedMapping(MinVelocity) => #6
                #5, #6 -> Disable GroupWorkflow SetMinimumVelocity => #7
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(MinVelocity) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMinVelocityPayload(MinVelocity=100))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                Disable ExternalizedMapping(MaxVelocity) => #8
                #7, #8 -> Disable GroupWorkflow SetMaximumVelocity => #9
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(MaxVelocity) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMaxVelocityPayload(MaxVelocity=10000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                Disable ExternalizedMapping(Acceleration(Category=AcceleratedMovement)) => #10
                #9, #10 -> Disable GroupWorkflow SetAcceleration => #11
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Acceleration) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationPayload(Acceleration=10000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                Disable ExternalizedMapping(Deceleration(Category=DeceleratedMovement)) => #12
                #11, #12 -> Disable GroupWorkflow SetDeceleration => #13
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Deceleration) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationPayload(Deceleration=-20000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                Disable ExternalizedMapping(AccelerationJerk(Category=AcceleratedMovement)) => #14
                #13, #14 -> Disable GroupWorkflow SetAccelerationJerk => #15
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(AccelerationJerk) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationJerkPayload(AccelerationJerk=-20000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                Disable ExternalizedMapping(DecelerationJerk(Category=DeceleratedMovement)) => #16
                #15, #16 -> Disable GroupWorkflow SetDecelerationJerk
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(DecelerationJerk) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationJerkPayload(DecelerationJerk=0))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                -> WorkflowOutput

            BehaviorSubject<Bonsai.Harp.HarpMessage> Commands
            -> Harp.FastStepper.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8)
            -> PublishSubject Events => #8
            SubscribeSubject LoomTriggerEvent
            -> SelectMany FormatHarp => #10
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject source

                SubscribeSubject source
                -> Harp.FastStepper.CreateMessage(MessageType=Read, Payload=Harp.FastStepper.CreateAnalogInputPayload(AnalogInput=0))
                -> MulticastSubject Commands

                SubscribeSubject Events
                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.TimestampedAnalogInput)
                -> MemberSelector(Selector=Seconds)
                -> Take(Count=1)
                -> AsyncSubject Timestamp

                SubscribeSubject source => #11
                SubscribeSubject Timestamp => #12
                #11, #12 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #14
                ExternalizedMapping(Address) => #15
                #14, #15 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=200, PayloadType=TimestampedU8))
                -> WorkflowOutput
            #8, #10 -> Merge
            -> PublishSubject LoomEvents
            -> WorkflowOutput

            BehaviorSubject<RigConfiguration.LoomAction> LoomAction
            -> PublishSubject LoomTriggerEvent => #15
            -> Condition IsDrop => #16
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=WorkflowProperty<RigConfiguration.LoomAction>(Value=Drop))
                -> WorkflowOutput
            ExternalizedMapping(HomeDistance, HomeDistanceOffset, MotorActivationTime, MotorDeactivationTime) => #17
            #16, #17 -> CreateObservable LoomSequence => #18
                WorkflowInput Source1 => #0
                ExternalizedMapping(HomeDistance, HomeDistanceOffset, HomeOffsetPauseTime, LiftToPosition, MotorDeactivationTime, MotorActivationTime) => #1
                #0, #1 -> GroupWorkflow LoomSequence
                    WorkflowInput Source1
                    -> GroupWorkflow GetPermission => #1
                        WorkflowInput Source1 => #0
                        SubscribeSubject LoomSequenceActive
                        -> BitwiseNot
                        -> Condition => #3
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #0, #3 -> Sample
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject LoomSequenceActive
                        -> WorkflowOutput
                    ExternalizedMapping => #2
                      HomeDistance
                      HomeDistanceOffset
                      HomeOffsetPauseTime
                      LiftToPosition
                      MotorDeactivationTime
                      MotorActivationTime
                      BottomPosition
                      Acceleration
                      MaxVelocity
                      BottomPauseTime
                    #1, #2 -> SelectMany LoomDropSequence
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true) => #1
                        ExternalizedMapping(MotorActivationTime) => #2
                        #1, #2 -> GroupWorkflow EngagingMotor => #3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(MotorActivationTime(Category=Timings)) => #1
                            #0, #1 -> SelectMany EnablingMotor => #2
                                WorkflowInput Source1
                                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableMotor))
                                -> MulticastSubject Commands => #2
                                ExternalizedMapping(DueTime(DisplayName=MotorActivationTime, Description="Time to wait after we enable the motor untill we can use it")) => #3
                                #2, #3 -> Delay(DueTime=PT0.1S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            Disable ExternalizedMapping(BrakeReleaseTime(Category=EngageMotorTimings)) => #3
                            #2, #3 -> Disable SelectMany ReleasingBrake
                                WorkflowInput Source1
                                -> Sink LogStateMachine
                                    WorkflowInput Source1
                                    -> StringProperty(Value=ReleasingBrake)
                                    -> MulticastSubject LoomStateLog
                                    -> WorkflowOutput
                                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOff))
                                -> MulticastSubject FastStepperCommands => #3
                                ExternalizedMapping(DueTime(DisplayName=BrakeReleaseTime)) => #4
                                #3, #4 -> Delay(DueTime=PT0S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            -> WorkflowOutput
                        ExternalizedMapping(BottomPosition, Acceleration, MaxVelocity) => #4
                        #3, #4 -> SelectMany Dropping => #5
                            SubscribeSubject Events
                            -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents) => #1
                            -> Condition MoveSuccessful
                                WorkflowInput Source1
                                -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                                -> WorkflowOutput
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #1 -> Condition MoveNotSuccessful
                                WorkflowInput Source1
                                -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                                -> WorkflowOutput
                            -> Aeon.Acquisition.ThrowException(Message=MoveNotSuccessful)

                            WorkflowInput Source1 => #7
                            ExternalizedMapping(MoveTo(DisplayName=BottomPosition, Category=Distances), Acceleration, MaxVelocity) => #8
                            #7, #8 -> IncludeWorkflow
                              Path=Extensions\MoveToParametric.bonsai
                              MoveTo=3000
                              MinVelocity=400
                              MaxVelocity=10000
                              Acceleration=18000
                              Deceleration=-20000
                              AccelerationJerk=-8000
                              DecelerationJerk=4000
                        ExternalizedMapping(BottomPauseTime) => #6
                        #5, #6 -> SelectMany Bottom => #7
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(DueTime(DisplayName=BottomPauseTime)) => #1
                            #0, #1 -> Delay(DueTime=PT2S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        ExternalizedMapping => #8
                          HomeDistance(Category=Distances)
                          HomeOffsetPauseTime(Description="Time to wait after the homing completes untill it moves slightly down")
                          HomeDistanceOffset(Category=Distances)
                          LiftToPosition(Category=Distances)
                        #7, #8 -> GroupWorkflow Homing => #9
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(LiftToPosition) => #1
                            #0, #1 -> SelectMany Lifting => #2
                                SubscribeSubject Events
                                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents) => #1
                                -> Condition MoveSuccessful
                                    WorkflowInput Source1
                                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                                    -> WorkflowOutput
                                -> Take(Count=1)
                                -> WorkflowOutput
                                #1 -> Condition MoveNotSuccessful
                                    WorkflowInput Source1
                                    -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                                    -> WorkflowOutput
                                -> Aeon.Acquisition.ThrowException(Message=MoveNotSuccessful)

                                WorkflowInput Source1 => #7
                                ExternalizedMapping(MoveTo(DisplayName=LiftToPosition)) => #8
                                #7, #8 -> IncludeWorkflow
                                  Path=Extensions\MoveToParametric.bonsai
                                  MoveTo=200
                                  MinVelocity=200
                                  MaxVelocity=800
                                  Acceleration=1000
                                  Deceleration=-1000
                                  AccelerationJerk=0
                                  DecelerationJerk=0
                            ExternalizedMapping(HomeDistance(Category=Distances)) => #3
                            #2, #3 -> SelectMany Homing => #4
                                SubscribeSubject Events
                                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.HomeStepsEvents) => #1
                                -> Condition HomingSuccessful
                                    WorkflowInput Source1
                                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
                                    -> WorkflowOutput
                                -> Take(Count=1)
                                -> WorkflowOutput
                                #1 -> Condition HomingNotSuccessful
                                    WorkflowInput Source1
                                    -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
                                    -> WorkflowOutput
                                -> Aeon.Acquisition.ThrowException(Message=HomingNotSuccessful)

                                WorkflowInput Source1 => #7
                                ExternalizedMapping(HomeSteps(DisplayName=HomeDistance)) => #8
                                #7, #8 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateHomeStepsPayload(HomeSteps=-1000))
                                -> MulticastSubject Commands
                            ExternalizedMapping(HomeOffsetPauseTime(Category=Timings)) => #5
                            #4, #5 -> SelectMany Home => #6
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(DueTime(DisplayName=HomeOffsetPauseTime)) => #1
                                #0, #1 -> Delay(DueTime=PT0.2S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            ExternalizedMapping(HomeDistanceOffset) => #7
                            #6, #7 -> SelectMany "Home Offset"
                                SubscribeSubject Events
                                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents) => #1
                                -> Condition MoveSuccessful
                                    WorkflowInput Source1
                                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                                    -> WorkflowOutput
                                -> Take(Count=1)
                                -> WorkflowOutput
                                #1 -> Condition MoveNotSuccessful
                                    WorkflowInput Source1
                                    -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                                    -> WorkflowOutput
                                -> Aeon.Acquisition.ThrowException(Message=MoveNotSuccessful)

                                WorkflowInput Source1 => #7
                                ExternalizedMapping(MoveTo(DisplayName=HomeDistanceOffset)) => #8
                                #7, #8 -> IncludeWorkflow
                                  Path=Extensions\MoveToParametric.bonsai
                                  MoveTo=42
                                  MinVelocity=200
                                  MaxVelocity=400
                                  Acceleration=500
                                  Deceleration=-500
                                  AccelerationJerk=0
                                  DecelerationJerk=0
                            -> WorkflowOutput
                        ExternalizedMapping(MotorDeactivationTime) => #10
                        #9, #10 -> Disable GroupWorkflow DisengagingMotor
                            WorkflowInput Source1 => #0
                            Disable ExternalizedMapping(BrakeLockTime(Category=DisengageMotorTimings)) => #1
                            #0, #1 -> Disable SelectMany LockingBrake => #2
                                WorkflowInput Source1
                                -> Sink LogStateMachine
                                    WorkflowInput Source1
                                    -> StringProperty(Value=LockingBrake)
                                    -> MulticastSubject LoomStateLog
                                    -> WorkflowOutput
                                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
                                -> MulticastSubject FastStepperCommands => #3
                                ExternalizedMapping(DueTime(DisplayName=BrakeLockTime)) => #4
                                #3, #4 -> Delay(DueTime=PT1S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            ExternalizedMapping(MotorDeactivationTime(Category=Timings)) => #3
                            #2, #3 -> SelectMany DisablingMotor
                                WorkflowInput Source1
                                -> Disable Sink
                                    WorkflowInput Source1
                                    -> StringProperty(Value=DisablingMotor)
                                    -> MulticastSubject LoomStateLog
                                    -> WorkflowOutput
                                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
                                -> MulticastSubject Commands => #3
                                ExternalizedMapping(DueTime(DisplayName=MotorDeactivationTime)) => #4
                                #3, #4 -> Delay(DueTime=PT0.2S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> Sink ReleasePermission
                        WorkflowInput Source1
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject LoomSequenceActive
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            #15 -> Condition Homming => #19
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=WorkflowProperty<RigConfiguration.LoomAction>(Value=Home))
                -> WorkflowOutput
            #19, #17 -> CreateObservable HomeSequence => #20
                WorkflowInput Source1
                -> GroupWorkflow GetPermission => #1
                    WorkflowInput Source1 => #0
                    SubscribeSubject LoomSequenceActive
                    -> BitwiseNot
                    -> Condition => #3
                        WorkflowInput Source1
                        -> WorkflowOutput
                    #0, #3 -> Zip
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject LoomSequenceActive
                    -> WorkflowOutput
                ExternalizedMapping(MotorActivationTime) => #2
                #1, #2 -> GroupWorkflow EngagingMotor => #3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(MotorActivationTime(Category=Timings)) => #1
                    #0, #1 -> SelectMany EnablingMotor => #2
                        WorkflowInput Source1
                        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableMotor))
                        -> MulticastSubject Commands => #2
                        ExternalizedMapping(DueTime(DisplayName=MotorActivationTime, Description="Time to wait after we enable the motor untill we can use it")) => #3
                        #2, #3 -> Delay(DueTime=PT0.1S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    Disable ExternalizedMapping(BrakeReleaseTime(Category=EngageMotorTimings)) => #3
                    #2, #3 -> Disable SelectMany ReleasingBrake
                        WorkflowInput Source1
                        -> Sink LogStateMachine
                            WorkflowInput Source1
                            -> StringProperty(Value=ReleasingBrake)
                            -> MulticastSubject LoomStateLog
                            -> WorkflowOutput
                        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOff))
                        -> MulticastSubject FastStepperCommands => #3
                        ExternalizedMapping(DueTime(DisplayName=BrakeReleaseTime)) => #4
                        #3, #4 -> Delay(DueTime=PT0S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> WorkflowOutput
                ExternalizedMapping(HomeDistance(Category=Distances)) => #4
                #3, #4 -> SelectMany Homing => #5
                    SubscribeSubject Events
                    -> Harp.FastStepper.Parse(Register=Harp.FastStepper.HomeStepsEvents) => #1
                    -> Condition HomingSuccessful
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                    #1 -> Condition HomingNotSuccessful
                        WorkflowInput Source1
                        -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
                        -> WorkflowOutput
                    -> Aeon.Acquisition.ThrowException(Message=HomingNotSuccessful)

                    WorkflowInput Source1 => #7
                    ExternalizedMapping(HomeSteps(DisplayName=HomeDistance)) => #8
                    #7, #8 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateHomeStepsPayload(HomeSteps=-3500))
                    -> MulticastSubject Commands
                ExternalizedMapping(HomeOffsetPauseTime(Category=Timings)) => #6
                #5, #6 -> SelectMany Home => #7
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(DueTime(DisplayName=HomeOffsetPauseTime)) => #1
                    #0, #1 -> Delay(DueTime=PT0.2S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                ExternalizedMapping(HomeDistanceOffset(Category=Distances)) => #8
                #7, #8 -> SelectMany "Home Offset" => #9
                    SubscribeSubject Events
                    -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents) => #1
                    -> Condition MoveSuccessful
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                    #1 -> Condition MoveNotSuccessful
                        WorkflowInput Source1
                        -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                        -> WorkflowOutput
                    -> Aeon.Acquisition.ThrowException(Message=MoveNotSuccessful)

                    WorkflowInput Source1 => #7
                    ExternalizedMapping(MoveTo(DisplayName=HomeDistanceOffset)) => #8
                    #7, #8 -> IncludeWorkflow
                      Path=Extensions\MoveToParametric.bonsai
                      MoveTo=42
                      MinVelocity=200
                      MaxVelocity=400
                      Acceleration=500
                      Deceleration=-500
                      AccelerationJerk=0
                      DecelerationJerk=0
                ExternalizedMapping(MotorDeactivationTime) => #10
                #9, #10 -> Disable GroupWorkflow DisengagingMotor
                    WorkflowInput Source1 => #0
                    Disable ExternalizedMapping(BrakeLockTime(Category=DisengageMotorTimings)) => #1
                    #0, #1 -> Disable SelectMany LockingBrake => #2
                        WorkflowInput Source1
                        -> Sink LogStateMachine
                            WorkflowInput Source1
                            -> StringProperty(Value=LockingBrake)
                            -> MulticastSubject LoomStateLog
                            -> WorkflowOutput
                        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
                        -> MulticastSubject FastStepperCommands => #3
                        ExternalizedMapping(DueTime(DisplayName=BrakeLockTime)) => #4
                        #3, #4 -> Delay(DueTime=PT1S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    ExternalizedMapping(MotorDeactivationTime(Category=Timings)) => #3
                    #2, #3 -> SelectMany DisablingMotor
                        WorkflowInput Source1
                        -> Disable Sink
                            WorkflowInput Source1
                            -> StringProperty(Value=DisablingMotor)
                            -> MulticastSubject LoomStateLog
                            -> WorkflowOutput
                        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
                        -> MulticastSubject Commands => #3
                        ExternalizedMapping(DueTime(DisplayName=MotorDeactivationTime)) => #4
                        #3, #4 -> Delay(DueTime=PT0.2S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> Sink ReleasePermission
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject LoomSequenceActive
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            #18, #20 -> Merge
            -> Merge

    GroupWorkflow CameraTopImagePreProcessing
        Disable Bonsai.Vision.Resize(Size(Width=1440, Height=1080), Interpolation=Linear)

        SubscribeSubject CameraEvents
        -> Disable Bonsai.Harp.ConvertTimestamped Undistort => #2
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Image)
            -> Bonsai.Vision.ResizeCanvas(Size(Width=1680, Height=1260), BorderType=Constant, FillValue(Val0=255, Val1=255, Val2=255, Val3=0), Offset=nil)
            -> Bonsai.Vision.Undistort(ImageSize=nil, Alpha=0, FocalLength(X=1000, Y=1000), PrincipalPoint(X=840, Y=630), RadialDistortion(X=-0.3, Y=0, Z=0), TangentialDistortion(X=0, Y=0))
            -> Bonsai.Vision.Resize(Size(Width=1440, Height=1080), Interpolation=Linear) => #4
            #0 -> MemberSelector(Selector=ChunkData) => #5
            #4, #5 -> Zip
            -> CreateVideoDataFrame
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=ImagePreProcessingEvents, Description="The name of the shared subject", Category=Subject)) => #3
        #2, #3 -> PublishSubject ProcessedImage => #4
        Source2=#4 -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject ProcessedImage => #1
        ExternalizedMapping(WholeImageThreshold) => #2
        #1, #2 -> GroupWorkflow BlobTracking => #3
            WorkflowInput Source1 => #0
            ExternalizedMapping(WholeImageThreshold) => #1
            #0, #1 -> Bonsai.Harp.ConvertTimestamped BinaryRegions
                WorkflowInput Source1
                -> MemberSelector(Selector=Image)
                -> Bonsai.Vision.MaskPolygon => #2
                  Regions(ArrayOfPoint(Point(X=2, Y=0), Point(X=2436, Y=10), Point(X=2444, Y=2047), Point(X=38, Y=2022)))
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=WholeImageThreshold)) => #3
                #2, #3 -> Bonsai.Vision.Threshold(ThresholdValue=32, MaxValue=255, ThresholdType=BinaryInv)
                -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.SortBinaryRegions
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=TrackingEvents)) => #4
        #3, #4 -> PublishSubject TrackingTop
        -> WorkflowOutput

    GroupWorkflow BinaryRegionsTracking
        ExternalizedMapping(Value(DisplayName=NumberOfTrackingSubjects))
        -> IntProperty(Value=1)
        -> BehaviorSubject NumberOfTrackingSubjects

        ExternalizedMapping(Name(DisplayName=TrackingEvents, Description=Contours, Category=Subject))
        -> SubscribeSubject TrackingTop
        -> Bonsai.Harp.ConvertTimestamped BinaryRegionsTracking
            WorkflowInput Source1 => #0
            SubscribeSubject NumberOfTrackingSubjects
            -> PropertyMapping(ExpectedNumberOfConnectedComponents) => #2
            #0, #2 -> BinaryRegionsTracking(ExpectedNumberOfConnectedComponents=1)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition NotNull => #6
          Expression: it.Value != null
        ExternalizedMapping(Name(DisplayName=BinaryRegionsEvents, Description="The name of the shared subject with binary regions tracking", Category=Subject)) => #7
        #6, #7 -> PublishSubject "BinaryRegionsTracking (Subject)"
        -> SelectMany IndexConnectedComponents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.DistConnCompCollection.ConnCompCollection)
            -> Concat => #2
            #0 -> MemberSelector(Selector=Value) => #3
            #2, #3 -> WithLatestFrom => #4
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> ElementIndex
            -> WorkflowOutput
        -> GroupBy(KeySelector=Index, ElementSelector=Value) => #10
        ExternalizedMapping(Name(DisplayName=BinaryRegionsObservable, Category=Subject)) => #11
        #10, #11 -> ReplaySubject BinaryRegionsObservable(BufferSize=nil) => #12
        Source2=#12 -> WorkflowOutput

    GroupWorkflow MovementBehaviorTracking
        ExternalizedMapping(Name(DisplayName=ObservableBinaryRegions, Category=Subject))
        -> SubscribeSubject BinaryRegionsObservable => #1
        ExternalizedMapping(VelocityThreshold) => #2
        #1, #2 -> SelectMany MovementBehaviorTracking => #3
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject source
            -> Merge => #4
            ExternalizedMapping(VelocityThreshold) => #5
            #4, #5 -> GroupWorkflow HeadTailTracking => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping(VelocityThreshold) => #1
                #0, #1 -> Bonsai.Harp.ConvertTimestamped HeadTailVelocity
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #2
                    Range(Start=0, Count=10)
                    -> Bonsai.Vision.CreatePoint2f(X=NaN, Y=NaN) => #4
                    #0 -> MemberSelector(Selector=Item1.Centroid) => #5
                    #4, #5 -> Merge
                    -> BufferCount(Count=10, Skip=1) => #7
                    #2, #7 -> WithLatestFrom => #8
                    ExternalizedMapping(VelocityThreshold) => #9
                    #8, #9 -> HeadTailVelocity(VelocityThreshold=20) => #10
                    #0 -> MemberSelector(Selector=Item1) => #11
                    #10, #11 -> Zip
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject source
            -> MemberSelector(Selector=Key) => #8
            #6, #8 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=HeadTailObservable, Category=Subject)) => #4
        #3, #4 -> ReplaySubject HeadTailObservable(BufferSize=nil)

    GroupWorkflow SubjectLookAtAngle
        ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
        -> SubscribeSubject HeadTailObservable => #1
        ExternalizedMapping(X, Y) => #2
        #1, #2 -> SelectMany LoomAngle
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> MemberSelector(Selector=Key)
            -> AsyncSubject Id
            #1 -> AsyncSubject Source

            SubscribeSubject Source
            -> Merge => #6
            ExternalizedMapping(X, Y) => #7
            #6, #7 -> Bonsai.Harp.ConvertTimestamped => #8
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1.Heading,Item1.Centroid") => #1
                -> MemberSelector(Selector=Item1) => #2
                #1 -> MemberSelector(Selector=Item2) => #3
                ExternalizedMapping(X(Category=LoomPosition), Y(Category=LoomPosition))
                -> Bonsai.Vision.CreatePoint2f(X=1844, Y=1561) => #5
                #3, #5 -> WithLatestFrom
                -> AngleCalculator => #7
                #2, #7 -> Zip
                -> Subtract
                -> NormalizeAngle
                -> WorkflowOutput
            SubscribeSubject Id => #9
            #8, #9 -> WithLatestFrom
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1) => #4
        ExternalizedMapping(Name(DisplayName=LoomAngle, Category=Subject)) => #5
        #4, #5 -> ReplaySubject LookAtAngleObservable(BufferSize=nil)

    SubscribeSubject ProcessedImage
    -> MemberSelector(Selector=Value.Image)
    -> GroupWorkflow InPlace
        ExternalizedMapping(HeadTail, RegionOfInterest1)
        -> Defer
            ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
            -> SubscribeSubject HeadTailObservable => #1
            ExternalizedMapping(RegionOfInterest1) => #2
            #1, #2 -> SelectMany LoomRegion
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject Id
                #1 -> AsyncSubject Source

                SubscribeSubject Source
                -> Merge
                -> Bonsai.Harp.ConvertTimestamped => #7
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.Head)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=RegionOfInterest1))
                -> PropertySource<Bonsai.Vision.CropPolygon,OpenCV.Net.Point[][]>
                  MemberName=Regions
                  Value
                    ArrayOfPoint
                      Point(X=1773, Y=1559)
                      Point(X=1776, Y=1573)
                      Point(X=1777, Y=1589)
                      Point(X=1784, Y=1603)
                      Point(X=1792, Y=1615)
                      Point(X=1801, Y=1625)
                      Point(X=1811, Y=1634)
                      Point(X=1823, Y=1641)
                      Point(X=1836, Y=1645)
                      Point(X=1850, Y=1646)
                      Point(X=1862, Y=1645)
                      Point(X=1875, Y=1641)
                      Point(X=1887, Y=1634)
                      Point(X=1897, Y=1625)
                      Point(X=1907, Y=1615)
                      Point(X=1914, Y=1603)
                      Point(X=1921, Y=1589)
                      Point(X=1922, Y=1573)
                      Point(X=1926, Y=1559)
                      Point(X=1922, Y=1543)
                      Point(X=1921, Y=1527)
                      Point(X=1914, Y=1515)
                      Point(X=1907, Y=1501)
                      Point(X=1897, Y=1491)
                      Point(X=1887, Y=1483)
                      Point(X=1875, Y=1476)
                      Point(X=1862, Y=1471)
                      Point(X=1850, Y=1471)
                      Point(X=1836, Y=1471)
                      Point(X=1823, Y=1476)
                      Point(X=1811, Y=1483)
                      Point(X=1801, Y=1491)
                      Point(X=1792, Y=1501)
                      Point(X=1784, Y=1515)
                      Point(X=1777, Y=1527)
                      Point(X=1776, Y=1543)
                      Point(X=1773, Y=1559)
                      Point(X=2120, Y=1508)
                      Point(X=2125, Y=1578)
                      Point(X=2120, Y=1646)
                      Point(X=2108, Y=1712)
                      Point(X=2087, Y=1772)
                      Point(X=2059, Y=1828)
                      Point(X=2027, Y=1877)
                      Point(X=1986, Y=1916)
                      Point(X=1942, Y=1945)
                      Point(X=1896, Y=1962)
                      Point(X=1848, Y=1968)
                      Point(X=1799, Y=1962)
                      Point(X=1754, Y=1945)
                      Point(X=1709, Y=1916)
                      Point(X=1669, Y=1877)
                      Point(X=1636, Y=1828)
                      Point(X=1609, Y=1772)
                      Point(X=1588, Y=1712)
                      Point(X=1576, Y=1646)
                      Point(X=1572, Y=1578)
                      Point(X=1576, Y=1508)
                      Point(X=1588, Y=1442)
                      Point(X=1609, Y=1382)
                      Point(X=1636, Y=1326)
                      Point(X=1669, Y=1277)
                      Point(X=1709, Y=1238)
                      Point(X=1754, Y=1208)
                      Point(X=1799, Y=1192)
                      Point(X=1848, Y=1186)
                      Point(X=1896, Y=1192)
                      Point(X=1942, Y=1208)
                      Point(X=1986, Y=1238)
                      Point(X=2027, Y=1277)
                      Point(X=2059, Y=1326)
                      Point(X=2087, Y=1382)
                      Point(X=2108, Y=1442)
                      Point(X=2120, Y=1508)
                -> PropertyMapping(Regions) => #10
                #7, #10 -> Aeon.Acquisition.RegionContainsPoint
                  Regions
                    ArrayOfPoint
                      Point(X=1773, Y=1559)
                      Point(X=1776, Y=1573)
                      Point(X=1777, Y=1589)
                      Point(X=1784, Y=1603)
                      Point(X=1792, Y=1615)
                      Point(X=1801, Y=1625)
                      Point(X=1811, Y=1634)
                      Point(X=1823, Y=1641)
                      Point(X=1836, Y=1645)
                      Point(X=1850, Y=1646)
                      Point(X=1862, Y=1645)
                      Point(X=1875, Y=1641)
                      Point(X=1887, Y=1634)
                      Point(X=1897, Y=1625)
                      Point(X=1907, Y=1615)
                      Point(X=1914, Y=1603)
                      Point(X=1921, Y=1589)
                      Point(X=1922, Y=1573)
                      Point(X=1926, Y=1559)
                      Point(X=1922, Y=1543)
                      Point(X=1921, Y=1527)
                      Point(X=1914, Y=1515)
                      Point(X=1907, Y=1501)
                      Point(X=1897, Y=1491)
                      Point(X=1887, Y=1483)
                      Point(X=1875, Y=1476)
                      Point(X=1862, Y=1471)
                      Point(X=1850, Y=1471)
                      Point(X=1836, Y=1471)
                      Point(X=1823, Y=1476)
                      Point(X=1811, Y=1483)
                      Point(X=1801, Y=1491)
                      Point(X=1792, Y=1501)
                      Point(X=1784, Y=1515)
                      Point(X=1777, Y=1527)
                      Point(X=1776, Y=1543)
                      Point(X=1773, Y=1559)
                      Point(X=2120, Y=1508)
                      Point(X=2125, Y=1578)
                      Point(X=2120, Y=1646)
                      Point(X=2108, Y=1712)
                      Point(X=2087, Y=1772)
                      Point(X=2059, Y=1828)
                      Point(X=2027, Y=1877)
                      Point(X=1986, Y=1916)
                      Point(X=1942, Y=1945)
                      Point(X=1896, Y=1962)
                      Point(X=1848, Y=1968)
                      Point(X=1799, Y=1962)
                      Point(X=1754, Y=1945)
                      Point(X=1709, Y=1916)
                      Point(X=1669, Y=1877)
                      Point(X=1636, Y=1828)
                      Point(X=1609, Y=1772)
                      Point(X=1588, Y=1712)
                      Point(X=1576, Y=1646)
                      Point(X=1572, Y=1578)
                      Point(X=1576, Y=1508)
                      Point(X=1588, Y=1442)
                      Point(X=1609, Y=1382)
                      Point(X=1636, Y=1326)
                      Point(X=1669, Y=1277)
                      Point(X=1709, Y=1238)
                      Point(X=1754, Y=1208)
                      Point(X=1799, Y=1192)
                      Point(X=1848, Y=1186)
                      Point(X=1896, Y=1192)
                      Point(X=1942, Y=1208)
                      Point(X=1986, Y=1238)
                      Point(X=2027, Y=1277)
                      Point(X=2059, Y=1326)
                      Point(X=2087, Y=1382)
                      Point(X=2108, Y=1442)
                      Point(X=2120, Y=1508)
                -> Sink => #12
                    WorkflowInput Source1 => #0
                    SubscribeSubject Id => #1
                    #0, #1 -> WithLatestFrom
                    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                    -> MulticastSubject InRegion
                    -> WorkflowOutput
                -> Condition Inside => #13
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                #12 -> Condition Outside => #14
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> BitwiseNot
                    -> WorkflowOutput
                #13, #14 -> WithLatestFrom => #15
                #13 -> MemberSelector(Selector=Seconds) => #16
                #15, #16 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> Bonsai.Harp.ConvertTimestamped => #19
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1.Seconds) => #1
                    #0 -> MemberSelector(Selector=Item2.Seconds) => #2
                    #1, #2 -> WithLatestFrom
                    -> Subtract
                    -> WorkflowOutput
                SubscribeSubject Id => #20
                #19, #20 -> WithLatestFrom
                -> WorkflowOutput
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1) => #2
        ExternalizedMapping(Name(DisplayName=LoomRegion, Category=Subject)) => #3
        #2, #3 -> ReplaySubject InPlaceRegionObservable(BufferSize=nil)

        WorkflowInput Source1
        ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.Int32,Bonsai.Harp.Timestamped(System.Boolean))> InRegion(BufferSize=nil)

GroupWorkflow Logger
    IncludeWorkflow(Path=Aeon.Acquisition:RepositoryLogController.bonsai, RepositoryPath=..\..\, DataPath=D:\ProjectPhields, FallbackPath=D:\Tests, ChunkSize=1)

    SubscribeSubject CameraControllerEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject LoggerTimestamp

    SubscribeSubject CameraEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=VideoData, FrameRate=50)
    -> BufferTime(TimeSpan=PT1S)
    -> MemberSelector(Selector=Count)

    ExternalizedMapping(WorkflowName)
    -> IncludeWorkflow(Path=Extensions\ExportMetadata.bonsai, WorkflowName=PuffTests.bonsai)

    SubscribeSubject SynchronizerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=ClockSynchronizer, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    SubscribeSubject CameraControllerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraController, Heartbeats="", ClosingDuration=PT2S)

    SubscribeSubject LoomEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=FastStepper, Heartbeats="", ClosingDuration=PT2S)

    SubscribeSubject BehaviorBoardEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=BehaviorBoard, Heartbeats="", ClosingDuration=PT2S)

    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectState
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=Heartbeats
      ClosingDuration=PT2S
      LogName=Environment_SubjectState
      Selector="Seconds,Value.Id,Value.Weight,Value.Type"

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats=Heartbeats, ClosingDuration=PT2S)

    Annotation ChangeToBinaryFormat(Text="") => #23
    -> Annotation BinaryRegionsObservable(Text="")
    -> IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=BinaryRegionsObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1.Item1)
        -> MemberSelector(Selector=Centroid) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow Id => #4
            WorkflowInput Source1
            -> WorkflowOutput
        #0 -> MemberSelector(Selector=Item1.Item2.Crossings)
        -> GroupWorkflow Crossings => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #2, #4, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it.Item2 as ID,
              it.Item3 as Crossings,
              it.Item1 as Centroid
            )
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop_BinaryRegions, Selector="")
    #23 -> Annotation HeadTailObservable(Text="")
    -> IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=HeadTailObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1.Item1) => #1
        -> MemberSelector(Selector=Centroid) => #2
        #1 -> MemberSelector(Selector=Head) => #3
        #1 -> MemberSelector(Selector=Tail) => #4
        #1 -> MemberSelector(Selector=Heading) => #5
        #1 -> MemberSelector(Selector=Velocity) => #6
        #0 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow Id => #8
            WorkflowInput Source1
            -> WorkflowOutput
        #2, #3, #4, #5, #6, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it.Item6 as ID,
              it.Item1 as Centroid,
              it.Item2 as Head,
              it.Item3 as Tail,
              it.Item4 as Heading,
              it.Item5 as Velocity
            )
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop_HeadTail, Selector="")
    #23 -> Annotation LookAtAngleObservable(Text="")
    -> IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=LookAtAngleObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow Id => #3
            WorkflowInput Source1
            -> WorkflowOutput
        Source1=#1, Source6=#3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it.Item2 as ID,
              it.Item1 as InLoomRegionDuration
            )
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop_LookAtAngle, Selector="")
    #23 -> Annotation InPlaceRegionObservable(Text="")
    -> IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=InPlaceRegionObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow Id => #3
            WorkflowInput Source1
            -> WorkflowOutput
        Source1=#1, Source6=#3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it.Item2 as ID,
              it.Item1 as LoomAngle
            )
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop_InPlaceRegion, Selector="")

    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentStateMetadata)> EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=Heartbeats, ClosingDuration=PT2S, LogName=Environment_EnvironmentState, Selector="Seconds,Value.Type")

    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=Heartbeats
      ClosingDuration=PT2S
      LogName=Environment_MessageLog
      Selector="Seconds,Value.Priority,Value.Type,Value.Message"

GroupWorkflow ControlPanel
    GroupWorkflow KeyBindings
        Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
        -> MulticastSubject StartCameras

        Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
        -> MulticastSubject StopCameras

        Disable Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Control", SuppressRepetitions=true)
        -> Disable MulticastSubject TriggerMotorParameters

        Disable Bonsai.Windows.Input.KeyDown(Filter="MButton D Control", SuppressRepetitions=false)
        -> Disable IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> Disable MulticastSubject Drop

        Disable Bonsai.Windows.Input.KeyDown(Filter="LButton A Control", SuppressRepetitions=true)
        -> Disable MulticastSubject TriggerMotorDropParameters

        Disable Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Control", SuppressRepetitions=true)
        -> Disable MulticastSubject TriggerMotorResetParameters

        Disable Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Control", SuppressRepetitions=true)
        -> Disable MulticastSubject TriggerLoomParameters

        Disable Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift Alt", SuppressRepetitions=false)
        -> Disable MulticastSubject TriggerReset

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject CameraControllerEvents
        -> GroupWorkflow SubjectDatabase
            WorkflowInput Source1 => #0
            SubscribeSubject EnvironmentState
            -> PropertyMapping(EnvironmentState(Selector=Value.Type)) => #2
            ExternalizedMapping(FileName(DisplayName=DatabaseConfig, Description="Specifies the name of the file containing the database connection string or path."))
            -> Aeon.Acquisition.LoadConfigFile(FileName=Z:\aeon\config\database.config) => #4
            Aeon.Acquisition.ServiceAccountName
            -> PropertyMapping(Value) => #6
            #4, #6 -> Index(Operand=StringProperty(Value=PHIELDS01)) => #7
            StringProperty => #8
            #7, #8 -> Catch
            -> PropertyMapping(DatabasePath) => #10
            #0, #2, #10 -> Aeon.Environment.EnvironmentSubjectState(EnvironmentState=Experiment)
            -> WorkflowOutput
        -> MulticastSubject SubjectState
        -> VisualizerMapping
        -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder EvironmentSubjectState(ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        SubscribeSubject CameraControllerEvents
        -> Aeon.Environment.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #3
        SubscribeSubject CameraControllerEvents
        -> Aeon.Environment.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #7
        SubscribeSubject EnvironmentState
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentStateType>(Value=Experiment))
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder ValveTrigger(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 16pt", Text="Trigger Puff")
        -> MulticastSubject TriggerValve
        -> Disable MulticastSubject Drop
        -> VisualizerMapping => #15
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
        -> VisualizerMapping => #17
        #15, #17 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #19
        SubscribeSubject EnvironmentState
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentStateType>(Value=Experiment))
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Home(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 16pt", Text="Home Loom")
        -> Sink Home
            WorkflowInput Source1
            -> PropertySource<WorkflowProperty(RigConfiguration.LoomAction),RigConfiguration.LoomAction>(MemberName=Value, Value=Home)
            -> MulticastSubject LoomAction
            -> WorkflowOutput
        -> VisualizerMapping => #26
        SubscribeSubject EnvironmentState
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentStateType>(Value=Experiment))
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Drop(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 16pt", Text="Drop Loom")
        -> Sink Drop
            WorkflowInput Source1
            -> PropertySource<WorkflowProperty(RigConfiguration.LoomAction),RigConfiguration.LoomAction>(MemberName=Value, Value=Drop)
            -> MulticastSubject LoomAction
            -> WorkflowOutput
        -> VisualizerMapping => #33
        #3, #7, #19, #26, #33 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata(ColumnCount=2, RowCount=3, ColumnStyles(ColumnStyle(Width=0)), RowStyles="", CellSpans(CellSpan(ColumnSpan=1, RowSpan=2)))
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=PulseSupplyPort0))
        -> PropertySource<Harp.Behavior.CreatePulseSupplyPort0Payload,System.UInt16>(MemberName=PulseSupplyPort0, Value=1000)
        -> MulticastSubject PulseSupplyPayload

    GroupWorkflow CamerasViz
        SubscribeSubject CameraEvents
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping
        -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder CameraOutput(ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=0.8), RowStyle(SizeType=Percent, Height=0.2)), CellSpans="")
        -> WorkflowOutput

    GroupWorkflow HeadTail
        SubscribeSubject HeadTailObservable
        -> Merge => #1
        SubscribeSubject InRegion
        -> Merge
        -> MemberSelector(Selector=Value) => #4
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Bonsai.Vision.Drawing.DrawContours,OpenCV.Net.Scalar>(MemberName=ExternalColor, Value(Val0=0, Val1=0, Val2=255, Val3=255)) => #6
        #4 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Bonsai.Vision.Drawing.DrawContours,OpenCV.Net.Scalar>(MemberName=ExternalColor, Value(Val0=255, Val1=0, Val2=0, Val3=255)) => #9
        #6, #9 -> Merge => #10
        #1, #10 -> Zip
        -> SampleInterval(Interval=PT0.1S) => #12
        SubscribeSubject ProcessedImage => #13
        #12, #13 -> WithLatestFrom
        -> SelectMany TrackingVisualizer
            WorkflowInput Source1
            -> GroupWorkflow CreateCanvas
                WorkflowInput Source1 => #0
                -> InputMapping(Size(Selector=Item2.Value.Image.Size))
                -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=2448, Height=2048), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #2
                #2, #0 -> Zip
                -> Take(Count=1)
                -> WorkflowOutput
            -> GroupWorkflow AddImage => #2
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2.Value.Image)
                -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #3
                #0 -> MemberSelector(Selector=Item2.Item2.Value.Image.Size)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
                  Expression: new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)
                #1, #3, #5 -> Zip
                -> InputMapping(Selector=Item1, Image(Selector=Item2), Destination(Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height"))
                -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=2448, Height=2048), Interpolation=Linear) => #8
                #0 -> MemberSelector(Selector=Item2) => #9
                #8, #9 -> Zip
                -> Take(Count=1)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #3
            #2 -> PropertyMapping(Contour(Selector=Item2.Item1.Item1.Value.Item2.Contour)) => #4
            #2 -> PropertyMapping(ExternalColor(Selector=Item2.Item1.Item2)) => #5
            #3, #4, #5 -> GroupWorkflow AddBlob => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping(Contour, ExternalColor) => #1
                #0, #1 -> Bonsai.Vision.Drawing.DrawContours(ExternalColor(Val0=0, Val1=0, Val2=255, Val3=255), HoleColor(Val0=0, Val1=0, Val2=0, Val3=0), MaxLevel=0, Thickness=3, LineType=Connected8)
                -> WorkflowOutput
            #2 -> MemberSelector(Selector=Item2.Item1.Item1.Value.Item1.Head)
            -> PropertyMapping(Center(Selector=it)) => #8
            #6, #8 -> Bonsai.Vision.Drawing.Circle(Center(X=2077, Y=1606), Radius=4, Color(Val0=0, Val1=0, Val2=255, Val3=255), Thickness=4, LineType=Connected8, Shift=0) => #9
            #2 -> MemberSelector(Selector=Item2.Item1.Item1.Value.Item1.Centroid)
            -> PropertyMapping(Center) => #11
            #9, #11 -> Bonsai.Vision.Drawing.Circle(Center(X=2125, Y=1637), Radius=4, Color(Val0=0, Val1=255, Val2=0, Val3=255), Thickness=4, LineType=Connected8, Shift=0) => #12
            #2 -> MemberSelector(Selector=Item2.Item1.Item1.Value.Item1.Tail)
            -> PropertyMapping(Center) => #14
            #12, #14 -> Bonsai.Vision.Drawing.Circle(Center(X=2168, Y=1674), Radius=4, Color(Val0=255, Val1=255, Val2=255, Val3=255), Thickness=4, LineType=Connected8, Shift=0)
            -> Take(Count=1)
            -> Disable TakeLast(Count=1)
            -> Bonsai.Vision.Drawing.DrawCanvas
            -> Take(Count=1)
            -> WorkflowOutput
        -> VisualizerMapping => #16
        ExternalizedMapping(Value(DisplayName=Id))
        -> IntProperty(Value=0) => #18
        -> IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=LookAtAngleObservable)
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
              it as LoomAngle
            )
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=LoomAngle, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #23
        IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=HeadTailObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
        -> MemberSelector(Selector=Value.Item1.Item1.Centroid)
        -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
        -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
        -> VisualizerMapping => #28
        #18 -> IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=HeadTailObservable)
        -> MemberSelector(Selector=Value.Item1.Velocity)
        -> Bonsai.Dsp.Norm(NormType=L2)
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=it, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #33
        #16, #23, #28, #33 -> Bonsai.Gui.TableLayoutPanelBuilder Tracking(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

GroupWorkflow TaskControl
    ExternalizedMapping
      RefractoryPeriodSeconds(Category=TaskParameters)
      Probability(Category=TaskParameters)
      AngleThreshold(Category=TaskParameters)
      TimeInLoomAreaThreshold(Category=TaskParameters)
    -> Defer SetParameters
        ExternalizedMapping(Value(DisplayName=Probability))
        -> PropertySource<DataSchema.Environment,System.Double>(MemberName=Probability, Value=0.5) => #1
        ExternalizedMapping(Value(DisplayName=AngleThreshold))
        -> PropertySource<DataSchema.Environment,System.Double>(MemberName=AngleThreshold, Value=1.57079633) => #3
        ExternalizedMapping(Value(DisplayName=RefractoryPeriodSeconds))
        -> PropertySource<DataSchema.Environment,System.Double>(MemberName=RefractoryPeriodSeconds, Value=10) => #5
        ExternalizedMapping(Value(DisplayName=TimeInLoomAreaThreshold))
        -> PropertySource<DataSchema.Environment,System.Double>(MemberName=TimeInLoomAreaThreshold, Value=0.5) => #7
        #1, #3, #5, #7 -> CombineLatest
        -> InputMapping(RefractoryPeriodSeconds(Selector=Item3), Probability(Selector=Item1), AngleThreshold(Selector=Item2), TimeInAreaThreshold(Selector=Item4))
        -> Trigger.TriggerParameters(Probability=0.5, AngleThreshold=1.57079633, RefractoryPeriodSeconds=10, TimeInAreaThreshold=0.5)
        -> WorkflowOutput
    -> BehaviorSubject "TaskParameters "

    SubscribeSubject InPlaceRegionObservable
    -> SelectMany ActivationCondition
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Source

        SubscribeSubject Source
        -> Merge
        -> GroupWorkflow RegionActivationPeriod
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject "TaskParameters "
            -> MemberSelector(Selector=TimeInAreaThreshold)
            -> PropertyMapping(Value) => #4
            #1, #4 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> SelectMany AngleCondition
            SubscribeSubject Source
            -> MemberSelector(Selector=Key) => #1
            -> IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=InPlaceRegionObservable)
            -> GroupWorkflow Inegion
                WorkflowInput Source1
                -> WorkflowOutput
            -> MemberSelector(Selector=Value) => #4
            SubscribeSubject "TaskParameters "
            -> MemberSelector(Selector=TimeInAreaThreshold)
            -> PropertyMapping(Value) => #7
            #4, #7 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
            -> Condition => #9
                WorkflowInput Source1
                -> WorkflowOutput
            #1 -> IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=LookAtAngleObservable) => #10
            #9, #10 -> WithLatestFrom
            -> Condition AngleCondition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Value)
                -> Bonsai.Dsp.Abs => #2
                SubscribeSubject "TaskParameters "
                -> MemberSelector(Selector=AngleThreshold)
                -> PropertyMapping(Value) => #5
                #2, #5 -> LessThan(Operand=DoubleProperty(Value=1.57079633))
                -> WorkflowOutput
            -> Take(Count=1) => #13
            #4, #7 -> LessThan(Operand=DoubleProperty(Value=0.5))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #15 -> TakeUntil
            -> WorkflowOutput
        -> WorkflowOutput
    -> GroupWorkflow StimulusProbability => #5
        Bonsai.Numerics.CreateRandom(Seed=11010)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
        -> BehaviorSubject Distribution

        WorkflowInput Source1
        -> SelectMany
            SubscribeSubject Distribution
            -> Bonsai.Numerics.Distributions.Sample => #1
            SubscribeSubject "TaskParameters "
            -> MemberSelector(Selector=Probability)
            -> PropertyMapping(Value) => #4
            #1, #4 -> LessThan(Operand=DoubleProperty(Value=0.5))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Trigger0
    -> MemberSelector(Selector=Seconds) => #7
    #5, #7 -> WithLatestFrom => #8
    SubscribeSubject "TaskParameters "
    -> MemberSelector(Selector=RefractoryPeriodSeconds) => #10
    #8, #10 -> WithLatestFrom
    -> Scan RefractoryPeriod => #12
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector="Value.Item1.Item2,Accumulation.Item1.Item2")
            -> Subtract => #2
            #0 -> MemberSelector(Selector=Value.Item2) => #3
            #2, #3 -> Zip
            -> GreaterThan
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    SubscribeSubject EnvironmentState
    -> MemberSelector(Selector=Value.Type)
    -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentStateType>(Value=Experiment)) => #15
    #12, #15 -> WithLatestFrom
    -> Condition Experiment?
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> MulticastSubject TriggerValve
    -> WorkflowOutput
