<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:fstep="clr-namespace:Harp.FastStepper;assembly=Harp.FastStepper"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="HomeDistance" Category="Distances" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Homing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FastStepperEvents</Name>
            </Expression>
            <Expression xsi:type="fstep:Parse">
              <harp:Register xsi:type="fstep:HomeStepsEvents" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HomingComplete</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="fstep:HomeStepsEventsFlags">
                      <Value>HomingSuccessful</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>HomingComplete</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomStateLog</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:Condition">
              <Name>HomingFailed</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="fstep:HomeStepsEventsFlags">
                      <Value>HomingFailed</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>HomingFailed</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomStateLog</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:ThrowException">
                <aeon:Message>HomingFailedException</aeon:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="HomeSteps" DisplayName="HomeDistance" />
            </Expression>
            <Expression xsi:type="fstep:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="fstep:CreateHomeStepsPayload">
                <fstep:HomeSteps>0</fstep:HomeSteps>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>FastStepperCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Homing</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomStateLog</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="HomeOffsetPauseTime" Category="Timings" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Home</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Home</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomStateLog</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="HomeOffsetPauseTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="HomeDistanceOffset" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Home Offset</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FastStepperEvents</Name>
            </Expression>
            <Expression xsi:type="fstep:Parse">
              <harp:Register xsi:type="fstep:Moving" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>MotorStoppedMoving</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="fstep:MovingFlags">
                      <Value>StopMoving</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="HomeDistanceOffset" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:Address>40</harp:Address>
                  <harp:PayloadType>S32</harp:PayloadType>
                  <harp:Value>42</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>FastStepperCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>HomeOffset</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomStateLog</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>