WorkflowBuilder(Version=2.8.5)
BehaviorSubject<System.Boolean> LoomSequenceActive
BehaviorSubject<System.String> LoomStateLog
StringProperty

BehaviorSubject<Bonsai.Harp.HarpMessage> FastStepperCommands
-> Harp.FastStepper.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM8)
-> PublishSubject FastStepperEvents

SubscribeSubject FastStepperEvents
-> First
-> Delay(DueTime=PT0.1S)
-> SelectMany InitializeMovementSettings(Description=GroupName)
    WorkflowInput Source1
    -> Disable GroupWorkflow BrakeLock
        WorkflowInput Source1
        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    -> GroupWorkflow DisableMotor
        WorkflowInput Source1
        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    -> GroupWorkflow DisableAnalog
        WorkflowInput Source1
        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableAnalogInput))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    -> GroupWorkflow EnableHoming => #4
        WorkflowInput Source1
        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableHoming))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    ExternalizedMapping(HomeVelocity) => #5
    #4, #5 -> GroupWorkflow SetHomingVelocity => #6
        WorkflowInput Source1 => #0
        ExternalizedMapping(HomeVelocity) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateHomeVelocityPayload(HomeVelocity=200))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(MinVelocity) => #7
    #6, #7 -> Disable GroupWorkflow SetMinimumVelocity => #8
        WorkflowInput Source1 => #0
        ExternalizedMapping(MinVelocity) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMinVelocityPayload(MinVelocity=400))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(MaxVelocity) => #9
    #8, #9 -> Disable GroupWorkflow SetMaximumVelocity => #10
        WorkflowInput Source1 => #0
        ExternalizedMapping(MaxVelocity) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMaxVelocityPayload(MaxVelocity=10000))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(Acceleration(Category=AcceleratedMovement)) => #11
    #10, #11 -> Disable GroupWorkflow SetAcceleration => #12
        WorkflowInput Source1 => #0
        ExternalizedMapping(Acceleration) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationPayload(Acceleration=3))
        -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=44, PayloadType=S32, Value=10000))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(Deceleration(Category=DeceleratedMovement)) => #13
    #12, #13 -> Disable GroupWorkflow SetDeceleration => #14
        WorkflowInput Source1 => #0
        ExternalizedMapping(Deceleration) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationPayload(Deceleration=-40000))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(AccelerationJerk(Category=AcceleratedMovement)) => #15
    #14, #15 -> Disable GroupWorkflow SetAccelerationJerk => #16
        WorkflowInput Source1 => #0
        ExternalizedMapping(AccelerationJerk) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationJerkPayload(AccelerationJerk=-10000))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(DecelerationJerk(Category=DeceleratedMovement)) => #17
    #16, #17 -> Disable GroupWorkflow SetDecelerationJerk
        WorkflowInput Source1 => #0
        ExternalizedMapping(DecelerationJerk) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationJerkPayload(DecelerationJerk=0))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Control", SuppressRepetitions=false)
-> SelectMany LoolDropSequenceLoop
    WorkflowInput Source1
    -> SelectMany "Loom Drop Sequence"
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> MulticastSubject LoomSequenceActive => #2
        ExternalizedMapping(MotorActivationTime, BrakeReleaseTime) => #3
        #2, #3 -> GroupWorkflow EngagingMotor => #4
            WorkflowInput Source1 => #0
            ExternalizedMapping(MotorActivationTime(Category=EngageMotorTimings)) => #1
            #0, #1 -> SelectMany EnablingMotor => #2
                WorkflowInput Source1
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=EnablingMotor)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableMotor))
                -> MulticastSubject FastStepperCommands => #3
                ExternalizedMapping(DueTime(DisplayName=MotorActivationTime, Description="Time to wait after we enable the motor untill we can use it")) => #4
                #3, #4 -> Delay(DueTime=PT1S)
                -> Take(Count=1)
                -> WorkflowOutput
            ExternalizedMapping(BrakeReleaseTime(Category=EngageMotorTimings)) => #3
            #2, #3 -> Disable SelectMany ReleasingBrake
                WorkflowInput Source1
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=ReleasingBrake)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOff))
                -> MulticastSubject FastStepperCommands => #3
                ExternalizedMapping(DueTime(DisplayName=BrakeReleaseTime)) => #4
                #3, #4 -> Delay(DueTime=PT1S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(DropDistance(Category=Distances)) => #5
        #4, #5 -> SelectMany Dropping => #6
            SubscribeSubject FastStepperEvents
            -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents)
            -> Condition MoveSuccessful
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput

            WorkflowInput Source1
            -> Sink LogStateMachine
                WorkflowInput Source1
                -> StringProperty(Value=Dropping)
                -> MulticastSubject LoomStateLog
                -> WorkflowOutput
            -> GroupWorkflow ConfigureMovement => #7
                WorkflowInput Source1 => #0
                ExternalizedMapping(MinVelocity) => #1
                #0, #1 -> GroupWorkflow SetMinimumVelocity => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(MinVelocity) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMinVelocityPayload(MinVelocity=400))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                ExternalizedMapping(MaxVelocity) => #3
                #2, #3 -> GroupWorkflow SetMaximumVelocity => #4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(MaxVelocity) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMaxVelocityPayload(MaxVelocity=10000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                ExternalizedMapping(Acceleration(Category=AcceleratedMovement)) => #5
                #4, #5 -> GroupWorkflow SetAcceleration => #6
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Acceleration) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationPayload(Acceleration=20000))
                    -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=44, PayloadType=S32, Value=10000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                ExternalizedMapping(Deceleration(Category=DeceleratedMovement)) => #7
                #6, #7 -> GroupWorkflow SetDeceleration => #8
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Deceleration) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationPayload(Deceleration=-20000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                ExternalizedMapping(AccelerationJerk(Category=AcceleratedMovement)) => #9
                #8, #9 -> GroupWorkflow SetAccelerationJerk => #10
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(AccelerationJerk) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationJerkPayload(AccelerationJerk=-10000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                ExternalizedMapping(DecelerationJerk(Category=DeceleratedMovement)) => #11
                #10, #11 -> GroupWorkflow SetDecelerationJerk
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(DecelerationJerk) => #1
                    #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationJerkPayload(DecelerationJerk=-8000))
                    -> MulticastSubject FastStepperCommands
                    -> WorkflowOutput
                -> WorkflowOutput
            ExternalizedMapping(MoveTo(DisplayName=DropDistance)) => #8
            #7, #8 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMoveToPayload(MoveTo=3000))
            -> MulticastSubject FastStepperCommands
        ExternalizedMapping(BottomPauseTime(Category=Timings)) => #7
        #6, #7 -> SelectMany Bottom => #8
            WorkflowInput Source1
            -> Sink LogStateMachine => #1
                WorkflowInput Source1
                -> StringProperty(Value=Bottom)
                -> MulticastSubject LoomStateLog
                -> WorkflowOutput
            ExternalizedMapping(DueTime(DisplayName=BottomPauseTime)) => #2
            #1, #2 -> Delay(DueTime=PT1S)
            -> Take(Count=1)
            -> WorkflowOutput
        ExternalizedMapping(HomeDistance(Category=Distances), HomeOffsetPauseTime, HomeDistanceOffset(Category=Distances)) => #9
        #8, #9 -> GroupWorkflow Homing => #10
            WorkflowInput Source1 => #0
            ExternalizedMapping(LiftToPosition) => #1
            #0, #1 -> SelectMany Lifting => #2
                SubscribeSubject FastStepperEvents
                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents)
                -> Condition MoveSuccessful
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput

                WorkflowInput Source1
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=Lifting)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> GroupWorkflow ConfigureMovement => #7
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(MinVelocity) => #1
                    #0, #1 -> GroupWorkflow SetMinimumVelocity => #2
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(MinVelocity) => #1
                        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMinVelocityPayload(MinVelocity=200))
                        -> MulticastSubject FastStepperCommands
                        -> WorkflowOutput
                    ExternalizedMapping(MaxVelocity) => #3
                    #2, #3 -> GroupWorkflow SetMaximumVelocity => #4
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(MaxVelocity) => #1
                        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMaxVelocityPayload(MaxVelocity=800))
                        -> MulticastSubject FastStepperCommands
                        -> WorkflowOutput
                    ExternalizedMapping(Acceleration(Category=AcceleratedMovement)) => #5
                    #4, #5 -> GroupWorkflow SetAcceleration => #6
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Acceleration) => #1
                        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationPayload(Acceleration=1000))
                        -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=44, PayloadType=S32, Value=10000))
                        -> MulticastSubject FastStepperCommands
                        -> WorkflowOutput
                    ExternalizedMapping(Deceleration(Category=DeceleratedMovement)) => #7
                    #6, #7 -> GroupWorkflow SetDeceleration => #8
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Deceleration) => #1
                        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationPayload(Deceleration=-1000))
                        -> MulticastSubject FastStepperCommands
                        -> WorkflowOutput
                    ExternalizedMapping(AccelerationJerk(Category=AcceleratedMovement)) => #9
                    #8, #9 -> GroupWorkflow SetAccelerationJerk => #10
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(AccelerationJerk) => #1
                        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationJerkPayload(AccelerationJerk=0))
                        -> MulticastSubject FastStepperCommands
                        -> WorkflowOutput
                    ExternalizedMapping(DecelerationJerk(Category=DeceleratedMovement)) => #11
                    #10, #11 -> GroupWorkflow SetDecelerationJerk
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(DecelerationJerk) => #1
                        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationJerkPayload(DecelerationJerk=0))
                        -> MulticastSubject FastStepperCommands
                        -> WorkflowOutput
                    -> WorkflowOutput
                ExternalizedMapping(MoveTo(DisplayName=LiftToPosition)) => #8
                #7, #8 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMoveToPayload(MoveTo=200))
                -> MulticastSubject FastStepperCommands
            ExternalizedMapping(HomeDistance(Category=Distances)) => #3
            #2, #3 -> SelectMany Homing => #4
                SubscribeSubject FastStepperEvents
                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.HomeStepsEvents) => #1
                -> Condition HomingComplete
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
                    -> WorkflowOutput
                -> StringProperty(Value=HomingComplete)
                -> MulticastSubject LoomStateLog
                -> Take(Count=1)
                -> WorkflowOutput
                #1 -> Condition HomingFailed
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingFailed))
                    -> WorkflowOutput
                -> StringProperty(Value=HomingFailed)
                -> MulticastSubject LoomStateLog
                -> Aeon.Acquisition.ThrowException(Message=HomingFailedException)

                WorkflowInput Source1 => #11
                ExternalizedMapping(HomeSteps(DisplayName=HomeDistance)) => #12
                #11, #12 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateHomeStepsPayload(HomeSteps=-3500))
                -> MulticastSubject FastStepperCommands
                #11 -> StringProperty(Value=Homing)
                -> MulticastSubject LoomStateLog
            ExternalizedMapping(HomeOffsetPauseTime(Category=Timings)) => #5
            #4, #5 -> SelectMany Home => #6
                WorkflowInput Source1
                -> Sink => #1
                    WorkflowInput Source1
                    -> StringProperty(Value=Home)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                ExternalizedMapping(DueTime(DisplayName=HomeOffsetPauseTime)) => #2
                #1, #2 -> Delay(DueTime=PT1S)
                -> Take(Count=1)
                -> WorkflowOutput
            ExternalizedMapping(HomeDistanceOffset) => #7
            #6, #7 -> SelectMany "Home Offset"
                SubscribeSubject FastStepperEvents
                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.Moving)
                -> Condition MotorStoppedMoving
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MovingFlags>(Value=StopMoving))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput

                WorkflowInput Source1 => #5
                ExternalizedMapping(Value(DisplayName=HomeDistanceOffset)) => #6
                #5, #6 -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=40, PayloadType=S32, Value=42))
                -> MulticastSubject FastStepperCommands
                #5 -> StringProperty(Value=HomeOffset)
                -> MulticastSubject LoomStateLog
            -> WorkflowOutput
        ExternalizedMapping(MotorDeactivationTime, BrakeLockTime) => #11
        #10, #11 -> GroupWorkflow DisengagingMotor
            WorkflowInput Source1 => #0
            ExternalizedMapping(BrakeLockTime(Category=DisengageMotorTimings)) => #1
            #0, #1 -> SelectMany LockingBrake => #2
                WorkflowInput Source1
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=LockingBrake)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
                -> MulticastSubject FastStepperCommands => #3
                ExternalizedMapping(DueTime(DisplayName=BrakeLockTime)) => #4
                #3, #4 -> Delay(DueTime=PT1S)
                -> Take(Count=1)
                -> WorkflowOutput
            ExternalizedMapping(MotorDeactivationTime(Category=DisengageMotorTimings)) => #3
            #2, #3 -> SelectMany DisablingMotor
                WorkflowInput Source1
                -> Sink
                    WorkflowInput Source1
                    -> StringProperty(Value=DisablingMotor)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
                -> MulticastSubject FastStepperCommands => #3
                ExternalizedMapping(DueTime(DisplayName=MotorDeactivationTime)) => #4
                #3, #4 -> Delay(DueTime=PT1S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject LoomSequenceActive
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> Take(Count=1)
    -> Disable Repeat
    -> Disable Retry
    -> Materialize
    -> WorkflowOutput

    Disable IntProperty(Value=0) => #8
    Disable IntProperty(Value=0) => #9
    #8, #9 -> Disable Concat
    -> Disable Take(Count=2)
    -> Disable ToArray
    -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=32, PayloadType=S16, Value=0))
    -> Disable Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=32, PayloadType=U32, IsArray=true))

SubscribeSubject FastStepperEvents => #12
-> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=44, PayloadType=S32, IsArray=false)) => #13
#12 -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=45, PayloadType=S32, IsArray=false)) => #14
#13, #14 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
      it.Item1 as StepsToBrake,
      it.Item2 as StepsToTarget
    )
-> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector="", ValueSelector="StepsToBrake,StepsToTarget", SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
-> Bonsai.IO.CsvWriter(FileName=debug.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
#12 -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents)
#12 -> Harp.FastStepper.Parse(Register=Harp.FastStepper.HomeStepsEvents)
#12 -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=32, PayloadType=U16, IsArray=false))
#12 -> Harp.FastStepper.Parse(Register=Harp.FastStepper.Control)

Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false) => #23
ExternalizedMapping(MotorActivationTime(Category=EngageMotorTimings)) => #24
#23, #24 -> SelectMany EnablingMotor => #25
    WorkflowInput Source1
    -> Sink LogStateMachine
        WorkflowInput Source1
        -> StringProperty(Value=EnablingMotor)
        -> MulticastSubject LoomStateLog
        -> WorkflowOutput
    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableMotor))
    -> MulticastSubject FastStepperCommands => #3
    ExternalizedMapping(DueTime(DisplayName=MotorActivationTime, Description="Time to wait after we enable the motor untill we can use it")) => #4
    #3, #4 -> Delay(DueTime=PT2S)
    -> Take(Count=1)
    -> WorkflowOutput
ExternalizedMapping(BrakeReleaseTime(Category=EngageMotorTimings)) => #26
#25, #26 -> SelectMany ReleasingBrake
    WorkflowInput Source1
    -> Sink LogStateMachine
        WorkflowInput Source1
        -> StringProperty(Value=ReleasingBrake)
        -> MulticastSubject LoomStateLog
        -> WorkflowOutput
    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOff))
    -> MulticastSubject FastStepperCommands => #3
    ExternalizedMapping(DueTime(DisplayName=BrakeReleaseTime)) => #4
    #3, #4 -> Delay(DueTime=PT1S)
    -> Take(Count=1)
    -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
-> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMoveToPayload(MoveTo=3060))
-> MulticastSubject FastStepperCommands

Bonsai.Windows.Input.KeyDown(Filter=D3, SuppressRepetitions=false) => #31
ExternalizedMapping(HomeDistance, HomeOffsetPauseTime, HomeDistanceOffset) => #32
#31, #32 -> IncludeWorkflow(Path=Extensions\Homing.bonsai, HomeDistance=-3500, HomeOffsetPauseTime=PT1S, HomeDistanceOffset=42)
-> Repeat
-> Retry
-> Materialize

Bonsai.Windows.Input.KeyDown(Filter=D4, SuppressRepetitions=false) => #37
ExternalizedMapping(BrakeLockTime(Category=DisengageMotorTimings)) => #38
#37, #38 -> SelectMany LockingBrake => #39
    WorkflowInput Source1
    -> Sink LoomStateLog
        WorkflowInput Source1
        -> StringProperty(Value=LockingBrake)
        -> MulticastSubject LoomStateLog
        -> WorkflowOutput
    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
    -> MulticastSubject FastStepperCommands => #3
    ExternalizedMapping(DueTime(DisplayName=BrakeLockTime)) => #4
    #3, #4 -> Delay(DueTime=PT1S)
    -> Take(Count=1)
    -> WorkflowOutput
ExternalizedMapping(MotorDeactivationTime(Category=DisengageMotorTimings)) => #40
#39, #40 -> SelectMany DisablingMotor
    WorkflowInput Source1
    -> Sink
        WorkflowInput Source1
        -> StringProperty(Value=DisablingMotor)
        -> MulticastSubject LoomStateLog
        -> WorkflowOutput
    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
    -> MulticastSubject FastStepperCommands => #3
    ExternalizedMapping(DueTime(DisplayName=MotorDeactivationTime)) => #4
    #3, #4 -> Delay(DueTime=PT1S)
    -> Take(Count=1)
    -> WorkflowOutput
