<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Merge IgroupObservables outputs each element and adding it's key</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="IGroupObservableSubject" Category="Subject" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HeadTailObservable</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="ExpectedGroupCount" Category="Subject" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NumberOfTrackingSubjects</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>2</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Source</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Source</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="harp:ConvertTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Source</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>