<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="ObservableBinaryRegions" Category="Subject" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BinaryRegionsObservable</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="VelocityThreshold" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>MovementBehaviorTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>source</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>source</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="harp:ConvertTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>source</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="VelocityThreshold" />
              <Property Name="HistoryLength" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HeadTailTracking</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="VelocityThreshold" />
                    <Property Name="HistoryLength" />
                  </Expression>
                  <Expression xsi:type="harp:ConvertTimestamped">
                    <Name>HeadTailVelocity</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:BinaryRegionExtremes">
                            <cv:Method>MajorAxis</cv:Method>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Count" DisplayName="HistoryLength" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Range">
                            <rx:Start>0</rx:Start>
                            <rx:Count>10</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:CreatePoint2f">
                            <cv:X>NaN</cv:X>
                            <cv:Y>NaN</cv:Y>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Centroid</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:BufferCount">
                            <rx:Count>10</rx:Count>
                            <rx:Skip>1</rx:Skip>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="VelocityThreshold" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:HeadTailVelocity">
                            <p1:VelocityThreshold>10</p1:VelocityThreshold>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="12" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="9" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="8" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="11" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="13" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Value.Item2</rx:KeySelector>
              <rx:ElementSelector>it</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="HeadTailObservable" Category="Subject" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>HeadTailObservable</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>