WorkflowBuilder(Version=2.8.5)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:TimestampGenerator.bonsai, PortName=COM9)
            -> WorkflowOutput

        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:CameraController.bonsai, PortName=COM7, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=7500
              SerialNumber=23391015
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraSide
            ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=3000
              SerialNumber=23391028
              Gain=0
              Binning=2
              FrameEvents=CameraSide
            -> WorkflowOutput

        GroupWorkflow MotorControl(Description=" Serial control of the motor")
            ExternalizedMapping(PortName)
            -> Bonsai.IO.Ports.CreateSerialPort
              Name=LoomDevice
              PortName=COM10
              BaudRate=1000000
              NewLine=\r\n
              Parity=None
              ParityReplace=63
              DataBits=8
              StopBits=One
              Handshake=None
              DiscardNull=false
              DtrEnable=true
              RtsEnable=false
              ReadBufferSize=4096
              WriteBufferSize=2048
              ReceivedBytesThreshold=1

            BehaviorSubject<System.String> MotorCommands
            -> Bonsai.IO.Ports.SerialWriteLine(PortName=LoomDevice, NewLine=\n)

            BehaviorSubject<System.Object> Drop
            -> StringProperty(Value=DROP)
            -> MulticastSubject MotorCommands

            Bonsai.IO.Ports.SerialReadLine(PortName=LoomDevice, NewLine=\n)
            -> RemoveEOL
            -> PublishSubject MotorEvents
            -> WorkflowOutput

            BehaviorSubject<System.Object> TriggerMotorParameters => #11
            ExternalizedMapping("(MicrosteppingCompensation)"(Category=MotorParameters), "(BrakeEngageDelay)"(Category=MotorParameters)) => #12
            #11, #12 -> GroupWorkflow MotorParameters
                ExternalizedMapping(Value(DisplayName=Command, Category=Command))
                -> StringProperty(Value=MotorParameters) => #1
                ExternalizedMapping(Value(DisplayName="(MicrosteppingCompensation)"))
                -> IntProperty(Value=4) => #3
                ExternalizedMapping(Value(DisplayName="(BrakeEngageDelay)"))
                -> IntProperty(Value=500) => #5
                #1, #3, #5 -> CombineLatest => #6
                WorkflowInput Source1 => #7
                #6, #7 -> Sample
                -> Format(Format={0};{1};{2}, Selector="Item1,Item2,Item3")
                -> WorkflowOutput
            -> MulticastSubject MotorCommands

            BehaviorSubject<System.Object> TriggerMotorDropParameters => #15
            ExternalizedMapping => #16
              MinVelocity(DisplayName=DropMinVelocity, Category=DropMotorParameters)
              MaxVelocity(DisplayName=DropMaxVelocity, Category=DropMotorParameters)
              Acceleration(DisplayName=DropAcceleration, Category=DropMotorParameters)
              Deceleration(DisplayName=DropDeceleration, Category=DropMotorParameters)
            #15, #16 -> IncludeWorkflow(Path=Extensions\MotorMovementMessage.bonsai, Command=DropMotorParameters, MinVelocity=31, MaxVelocity=32767, Acceleration=4000, Deceleration=20000)
            -> MulticastSubject MotorCommands

            BehaviorSubject<System.Object> TriggerMotorResetParameters => #19
            ExternalizedMapping => #20
              MinVelocity(DisplayName=ResetMinVelocity, Category=ResetMovementParameters)
              MaxVelocity(DisplayName=ResetMaxVelocity, Category=ResetMovementParameters)
              Acceleration(DisplayName=ResetAcceleration, Category=ResetMovementParameters)
              Deceleration(DisplayName=ResetDeceleration, Category=ResetMovementParameters)
            #19, #20 -> IncludeWorkflow(Path=Extensions\MotorMovementMessage.bonsai, Command=ResetMotorParameters, MinVelocity=31, MaxVelocity=150, Acceleration=500, Deceleration=500)
            -> MulticastSubject MotorCommands

            BehaviorSubject<System.Object> TriggerLoomParameters => #23
            ExternalizedMapping("(DropDistance)"(Category=LoomParameters), "(BottomPause)"(Category=LoomParameters), "(InterDropInterval)"(Category=LoomParameters)) => #24
            #23, #24 -> GroupWorkflow LoomParameters
                ExternalizedMapping(Value(DisplayName=Command, Category=Command))
                -> StringProperty(Value=LoomParameters) => #1
                ExternalizedMapping(Value(DisplayName="(DropDistance)"))
                -> IntProperty(Value=760) => #3
                ExternalizedMapping(Value(DisplayName="(BottomPause)"))
                -> IntProperty(Value=5000) => #5
                ExternalizedMapping(Value(DisplayName="(InterDropInterval)"))
                -> IntProperty(Value=1000) => #7
                #1, #3, #5, #7 -> CombineLatest => #8
                WorkflowInput Source1 => #9
                #8, #9 -> Sample
                -> Format(Format={0};{1};{2};{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> MulticastSubject MotorCommands

            BehaviorSubject<System.Object> TriggerReset
            -> StringProperty(Value=M;-3100)
            -> MulticastSubject MotorCommands

    GroupWorkflow ImagePreProcessing
        ExternalizedMapping(Name(DisplayName=FrameEvents, Category=Subject))
        -> SubscribeSubject CameraTop
        -> Bonsai.Harp.ConvertTimestamped Undistort => #2
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Image)
            -> Bonsai.Vision.ResizeCanvas(Size(Width=1680, Height=1260), BorderType=Constant, FillValue(Val0=255, Val1=255, Val2=255, Val3=0), Offset=nil)
            -> Bonsai.Vision.Undistort(ImageSize=nil, Alpha=0, FocalLength(X=1000, Y=1000), PrincipalPoint(X=840, Y=630), RadialDistortion(X=-0.3, Y=0, Z=0), TangentialDistortion(X=0, Y=0))
            -> Bonsai.Vision.Resize(Size(Width=1440, Height=1080), Interpolation=Linear) => #4
            #0 -> MemberSelector(Selector=ChunkData) => #5
            #4, #5 -> Zip
            -> CreateVideoDataFrame
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=ImagePreProcessingEvents, Description="The name of the shared subject", Category=Subject)) => #3
        #2, #3 -> PublishSubject ProcessedImage => #4
        Source2=#4 -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject ProcessedImage => #1
        ExternalizedMapping(WholeImageThreshold, NestThreshold) => #2
        #1, #2 -> GroupWorkflow BlobTracking => #3
            WorkflowInput Source1 => #0
            ExternalizedMapping(WholeImageThreshold, NestThreshold) => #1
            #0, #1 -> Bonsai.Harp.ConvertTimestamped BinaryRegions
                WorkflowInput Source1
                -> MemberSelector(Selector=Image) => #1
                -> Bonsai.Vision.MaskPolygon => #2
                  Regions(ArrayOfPoint(Point(X=1254, Y=26), Point(X=317, Y=15), Point(X=300, Y=548), Point(X=302, Y=1066), Point(X=1281, Y=1067)))
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=WholeImageThreshold)) => #3
                #2, #3 -> Bonsai.Vision.Threshold(ThresholdValue=61, MaxValue=255, ThresholdType=BinaryInv) => #4
                #1 -> Bonsai.Vision.MaskPolygon => #5
                  Regions
                    ArrayOfPoint
                      Point(X=1064, Y=876)
                      Point(X=1084, Y=860)
                      Point(X=1091, Y=840)
                      Point(X=1092, Y=807)
                      Point(X=1086, Y=788)
                      Point(X=1068, Y=776)
                      Point(X=1045, Y=764)
                      Point(X=1014, Y=779)
                      Point(X=989, Y=799)
                      Point(X=985, Y=833)
                      Point(X=989, Y=867)
                      Point(X=1013, Y=881)
                      Point(X=1036, Y=890)
                    ArrayOfPoint
                      Point(X=602, Y=252)
                      Point(X=603, Y=190)
                      Point(X=574, Y=174)
                      Point(X=550, Y=167)
                      Point(X=522, Y=180)
                      Point(X=497, Y=197)
                      Point(X=491, Y=221)
                      Point(X=493, Y=250)
                      Point(X=512, Y=267)
                      Point(X=547, Y=284)
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=NestThreshold)) => #6
                #5, #6 -> Bonsai.Vision.Threshold(ThresholdValue=132, MaxValue=255, ThresholdType=BinaryInv) => #7
                #1 -> Bonsai.Vision.MaskPolygon => #8
                  Regions
                    ArrayOfPoint
                      Point(X=335, Y=391)
                      Point(X=330, Y=552)
                      Point(X=329, Y=722)
                      Point(X=330, Y=967)
                      Point(X=328, Y=1046)
                      Point(X=462, Y=1040)
                      Point(X=614, Y=1042)
                      Point(X=845, Y=1040)
                      Point(X=967, Y=1037)
                      Point(X=1081, Y=1037)
                      Point(X=1166, Y=1038)
                      Point(X=1214, Y=1042)
                      Point(X=1259, Y=1048)
                      Point(X=1252, Y=1000)
                      Point(X=1247, Y=929)
                      Point(X=1244, Y=788)
                      Point(X=1242, Y=612)
                      Point(X=1241, Y=525)
                      Point(X=1239, Y=436)
                      Point(X=1231, Y=277)
                      Point(X=1228, Y=181)
                      Point(X=1228, Y=44)
                      Point(X=1150, Y=47)
                      Point(X=1043, Y=44)
                      Point(X=701, Y=36)
                      Point(X=349, Y=41)
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=InArenaThreshold)) => #9
                #8, #9 -> Bonsai.Vision.Threshold(ThresholdValue=104, MaxValue=255, ThresholdType=BinaryInv) => #10
                #4, #7, #10 -> Zip
                -> Add
                -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.SortBinaryRegions
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=TrackingEvents)) => #4
        #3, #4 -> PublishSubject TrackingTop
        -> WorkflowOutput

    GroupWorkflow BinaryRegionsTracking
        ExternalizedMapping(Value(DisplayName=NumberOfTrackingSubjects))
        -> IntProperty(Value=1)
        -> BehaviorSubject NumberOfTrackingSubjects

        ExternalizedMapping(Name(DisplayName=TrackingEvents, Description=Contours, Category=Subject))
        -> SubscribeSubject TrackingTop
        -> Bonsai.Harp.ConvertTimestamped BinaryRegionsTracking
            WorkflowInput Source1 => #0
            SubscribeSubject NumberOfTrackingSubjects
            -> PropertyMapping(ExpectedNumberOfConnectedComponents) => #2
            #0, #2 -> BinaryRegionsTracking(ExpectedNumberOfConnectedComponents=1)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition NotNull => #6
          Expression: it.Value != null
        ExternalizedMapping(Name(DisplayName=BinaryRegionsEvents, Description="The name of the shared subject with binary regions tracking", Category=Subject)) => #7
        #6, #7 -> PublishSubject "BinaryRegionsTracking (Subject)"
        -> SelectMany IndexConnectedComponents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.DistConnCompCollection.ConnCompCollection)
            -> Concat => #2
            #0 -> MemberSelector(Selector=Value) => #3
            #2, #3 -> WithLatestFrom => #4
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> ElementIndex
            -> WorkflowOutput
        -> GroupBy(KeySelector=Index, ElementSelector=Value) => #10
        ExternalizedMapping(Name(DisplayName=BinaryRegionsObservable, Category=Subject)) => #11
        #10, #11 -> ReplaySubject BinaryRegionsObservable(BufferSize=nil) => #12
        Source2=#12 -> WorkflowOutput

    GroupWorkflow MovementBehaviorTracking
        ExternalizedMapping(Name(DisplayName=ObservableBinaryRegions, Category=Subject))
        -> SubscribeSubject BinaryRegionsObservable => #1
        ExternalizedMapping(VelocityThreshold) => #2
        #1, #2 -> SelectMany MovementBehaviorTracking => #3
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject source
            -> Merge => #4
            ExternalizedMapping(VelocityThreshold) => #5
            #4, #5 -> GroupWorkflow HeadTailTracking => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping(VelocityThreshold) => #1
                #0, #1 -> Bonsai.Harp.ConvertTimestamped HeadTailVelocity
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #2
                    Range(Start=0, Count=10)
                    -> Bonsai.Vision.CreatePoint2f(X=NaN, Y=NaN) => #4
                    #0 -> MemberSelector(Selector=Item1.Centroid) => #5
                    #4, #5 -> Merge
                    -> BufferCount(Count=10, Skip=1) => #7
                    #2, #7 -> WithLatestFrom => #8
                    ExternalizedMapping(VelocityThreshold) => #9
                    #8, #9 -> HeadTailVelocity(VelocityThreshold=10) => #10
                    #0 -> MemberSelector(Selector=Item1) => #11
                    #10, #11 -> Zip
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject source
            -> MemberSelector(Selector=Key) => #8
            #6, #8 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=HeadTailObservable, Category=Subject)) => #4
        #3, #4 -> ReplaySubject HeadTailObservable(BufferSize=nil)

    GroupWorkflow LoomAngle
        ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
        -> SubscribeSubject HeadTailObservable => #1
        ExternalizedMapping(X, Y) => #2
        #1, #2 -> SelectMany LoomAngle
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> MemberSelector(Selector=Key)
            -> AsyncSubject Id
            #1 -> AsyncSubject Source

            SubscribeSubject Source
            -> Merge => #6
            ExternalizedMapping(X, Y) => #7
            #6, #7 -> Bonsai.Harp.ConvertTimestamped => #8
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1.Heading,Item1.Centroid") => #1
                -> MemberSelector(Selector=Item1) => #2
                #1 -> MemberSelector(Selector=Item2) => #3
                ExternalizedMapping(X(Category=LoomPosition), Y(Category=LoomPosition))
                -> Bonsai.Vision.CreatePoint2f(X=872, Y=488) => #5
                #3, #5 -> WithLatestFrom
                -> AngleCalculator => #7
                #2, #7 -> Zip
                -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Math.PI-Math.ABS(Math.ABS(it.Item1 - it.Item2) - Math.PI)
                -> Subtract
                -> NormalizeAngle
                -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((it+Math.PI)%(2*Math.PI))-Math.PI
                -> WorkflowOutput
            SubscribeSubject Id => #9
            #8, #9 -> WithLatestFrom
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1) => #4
        ExternalizedMapping(Name(DisplayName=LoomAngle, Category=Subject)) => #5
        #4, #5 -> ReplaySubject LoomAngleObservable(BufferSize=nil)

    SubscribeSubject ProcessedImage
    -> MemberSelector(Selector=Value.Image)
    -> GroupWorkflow LoomRegion
        ExternalizedMapping(HeadTail, RegionOfInterest1)
        -> Defer
            ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
            -> SubscribeSubject HeadTailObservable => #1
            ExternalizedMapping(RegionOfInterest1) => #2
            #1, #2 -> SelectMany LoomRegion
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject Id
                #1 -> AsyncSubject Source

                SubscribeSubject Source
                -> Merge
                -> Bonsai.Harp.ConvertTimestamped => #7
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.Head)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=RegionOfInterest1))
                -> PropertySource<Bonsai.Vision.CropPolygon,OpenCV.Net.Point[][]>
                  MemberName=Regions
                  Value
                    ArrayOfPoint
                      Point(X=800, Y=498)
                      Point(X=802, Y=508)
                      Point(X=803, Y=519)
                      Point(X=808, Y=529)
                      Point(X=814, Y=538)
                      Point(X=821, Y=545)
                      Point(X=829, Y=551)
                      Point(X=838, Y=556)
                      Point(X=848, Y=559)
                      Point(X=859, Y=560)
                      Point(X=868, Y=559)
                      Point(X=878, Y=556)
                      Point(X=887, Y=551)
                      Point(X=895, Y=545)
                      Point(X=902, Y=538)
                      Point(X=908, Y=529)
                      Point(X=913, Y=519)
                      Point(X=914, Y=508)
                      Point(X=917, Y=498)
                      Point(X=914, Y=486)
                      Point(X=913, Y=475)
                      Point(X=908, Y=466)
                      Point(X=902, Y=456)
                      Point(X=895, Y=449)
                      Point(X=887, Y=443)
                      Point(X=878, Y=438)
                      Point(X=868, Y=435)
                      Point(X=859, Y=435)
                      Point(X=848, Y=435)
                      Point(X=838, Y=438)
                      Point(X=829, Y=443)
                      Point(X=821, Y=449)
                      Point(X=814, Y=456)
                      Point(X=808, Y=466)
                      Point(X=803, Y=475)
                      Point(X=802, Y=486)
                      Point(X=800, Y=498)
                      Point(X=1065, Y=461)
                      Point(X=1069, Y=511)
                      Point(X=1065, Y=560)
                      Point(X=1056, Y=607)
                      Point(X=1040, Y=650)
                      Point(X=1019, Y=690)
                      Point(X=994, Y=725)
                      Point(X=963, Y=753)
                      Point(X=929, Y=774)
                      Point(X=894, Y=786)
                      Point(X=857, Y=790)
                      Point(X=820, Y=786)
                      Point(X=785, Y=774)
                      Point(X=751, Y=753)
                      Point(X=720, Y=725)
                      Point(X=695, Y=690)
                      Point(X=674, Y=650)
                      Point(X=658, Y=607)
                      Point(X=649, Y=560)
                      Point(X=646, Y=511)
                      Point(X=649, Y=461)
                      Point(X=658, Y=414)
                      Point(X=674, Y=371)
                      Point(X=695, Y=331)
                      Point(X=720, Y=296)
                      Point(X=751, Y=268)
                      Point(X=785, Y=247)
                      Point(X=820, Y=235)
                      Point(X=857, Y=231)
                      Point(X=894, Y=235)
                      Point(X=929, Y=247)
                      Point(X=963, Y=268)
                      Point(X=994, Y=296)
                      Point(X=1019, Y=331)
                      Point(X=1040, Y=371)
                      Point(X=1056, Y=414)
                      Point(X=1065, Y=461)
                -> PropertyMapping(Regions) => #10
                #7, #10 -> Aeon.Acquisition.RegionContainsPoint => #11
                  Regions
                    ArrayOfPoint
                      Point(X=800, Y=498)
                      Point(X=802, Y=508)
                      Point(X=803, Y=519)
                      Point(X=808, Y=529)
                      Point(X=814, Y=538)
                      Point(X=821, Y=545)
                      Point(X=829, Y=551)
                      Point(X=838, Y=556)
                      Point(X=848, Y=559)
                      Point(X=859, Y=560)
                      Point(X=868, Y=559)
                      Point(X=878, Y=556)
                      Point(X=887, Y=551)
                      Point(X=895, Y=545)
                      Point(X=902, Y=538)
                      Point(X=908, Y=529)
                      Point(X=913, Y=519)
                      Point(X=914, Y=508)
                      Point(X=917, Y=498)
                      Point(X=914, Y=486)
                      Point(X=913, Y=475)
                      Point(X=908, Y=466)
                      Point(X=902, Y=456)
                      Point(X=895, Y=449)
                      Point(X=887, Y=443)
                      Point(X=878, Y=438)
                      Point(X=868, Y=435)
                      Point(X=859, Y=435)
                      Point(X=848, Y=435)
                      Point(X=838, Y=438)
                      Point(X=829, Y=443)
                      Point(X=821, Y=449)
                      Point(X=814, Y=456)
                      Point(X=808, Y=466)
                      Point(X=803, Y=475)
                      Point(X=802, Y=486)
                      Point(X=800, Y=498)
                      Point(X=1065, Y=461)
                      Point(X=1069, Y=511)
                      Point(X=1065, Y=560)
                      Point(X=1056, Y=607)
                      Point(X=1040, Y=650)
                      Point(X=1019, Y=690)
                      Point(X=994, Y=725)
                      Point(X=963, Y=753)
                      Point(X=929, Y=774)
                      Point(X=894, Y=786)
                      Point(X=857, Y=790)
                      Point(X=820, Y=786)
                      Point(X=785, Y=774)
                      Point(X=751, Y=753)
                      Point(X=720, Y=725)
                      Point(X=695, Y=690)
                      Point(X=674, Y=650)
                      Point(X=658, Y=607)
                      Point(X=649, Y=560)
                      Point(X=646, Y=511)
                      Point(X=649, Y=461)
                      Point(X=658, Y=414)
                      Point(X=674, Y=371)
                      Point(X=695, Y=331)
                      Point(X=720, Y=296)
                      Point(X=751, Y=268)
                      Point(X=785, Y=247)
                      Point(X=820, Y=235)
                      Point(X=857, Y=231)
                      Point(X=894, Y=235)
                      Point(X=929, Y=247)
                      Point(X=963, Y=268)
                      Point(X=994, Y=296)
                      Point(X=1019, Y=331)
                      Point(X=1040, Y=371)
                      Point(X=1056, Y=414)
                      Point(X=1065, Y=461)
                -> Condition Inside => #12
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                #11 -> Condition Outside => #13
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> BitwiseNot
                    -> WorkflowOutput
                #12, #13 -> WithLatestFrom => #14
                #12 -> MemberSelector(Selector=Seconds) => #15
                #14, #15 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> Bonsai.Harp.ConvertTimestamped => #18
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1.Seconds) => #1
                    #0 -> MemberSelector(Selector=Item2.Seconds) => #2
                    #1, #2 -> WithLatestFrom
                    -> Subtract
                    -> WorkflowOutput
                SubscribeSubject Id => #19
                #18, #19 -> WithLatestFrom
                -> WorkflowOutput
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1) => #2
        ExternalizedMapping(Name(DisplayName=LoomRegion, Category=Subject)) => #3
        #2, #3 -> ReplaySubject LoomRegionObservable(BufferSize=nil)

        WorkflowInput Source1

IncludeWorkflow(Path=Extensions\Logger.bonsai, WorkflowName=MultiShelter-PHIELDS01.bonsai)
IncludeWorkflow(Path=Extensions\ControlPanel.bonsai)
