WorkflowBuilder(Version=2.8.5)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow CameraTop
            Disable ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> Disable IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=7500
              SerialNumber=23391015
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> Disable WorkflowOutput

            Disable PropertySource<SubjectExpressionBuilder,System.String>(MemberName=FrameEvents, Value=CameraTop)

            Disable GroupWorkflow VideoSource
                Bonsai.Vision.FileCapture
                  FileName=C:\Git\SainsburyWellcomeCentre\Phields\phieldsexperiments\src\bonsai\devdata\2024-12-16T15-40-12\Cam1\Cam1_2024-12-16T16-00-00.avi
                  PlaybackRate=0
                  StartPosition=0
                  PositionUnits=Frames
                  Loop=true
                  Playing=true
                -> Bonsai.Vision.Grayscale
                -> CreateVideoDataFrame => #2
                Timer(DueTime=PT0S, Period=PT0.1S)
                -> Divide(Operand=WorkflowProperty<System.Int64>(Value=10))
                -> InputMapping(Value(Selector=it))
                -> DoubleProperty(Value=34) => #6
                #2, #6 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #8
                Disable Aeon.Acquisition.VideoFileCapture(FileName=devdata\2024-12-16T15-40-12\Cam1\Cam1_2024-12-16T16-00-00.avi)
                -> Disable Bonsai.Harp.ConvertTimestamped GetImage => #10
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Image)
                    -> Bonsai.Vision.Grayscale
                    -> WorkflowOutput
                #8, #10 -> WorkflowOutput

            GroupWorkflow VideoSource
                Bonsai.Vision.FileCapture
                  FileName=C:\Users\User\Downloads\CameraTop_2025-01-15T15-00-00.avi
                  PlaybackRate=0
                  StartPosition=43100
                  PositionUnits=Frames
                  Loop=true
                  Playing=false
                -> Bonsai.Vision.Grayscale
                -> CreateVideoDataFrame => #2
                Timer(DueTime=PT0S, Period=PT0.1S)
                -> InputMapping(Value(Selector=it))
                -> DoubleProperty(Value=637)
                -> Divide(Operand=WorkflowProperty<System.Int64>(Value=10))
                -> InputMapping(Value(Selector=it))
                -> DoubleProperty(Value=63.7) => #8
                #2, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                Disable Aeon.Acquisition.VideoFileCapture(FileName=devdata\2024-12-16T15-40-12\Cam1\Cam1_2024-12-16T16-00-00.avi)
                -> Disable Bonsai.Harp.ConvertTimestamped GetImage => #12
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Image)
                    -> Bonsai.Vision.Grayscale
                    -> WorkflowOutput
                #10, #12 -> WorkflowOutput
            -> PublishSubject CameraTop
            -> WorkflowOutput

    GroupWorkflow ImagePreProcessing
        ExternalizedMapping(Name(DisplayName=FrameEvents, Category=Subject))
        -> SubscribeSubject CameraTop
        -> Bonsai.Harp.ConvertTimestamped Undistort => #2
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Image)
            -> Bonsai.Vision.ResizeCanvas(Size(Width=1680, Height=1260), BorderType=Constant, FillValue(Val0=255, Val1=255, Val2=255, Val3=0), Offset=nil)
            -> Bonsai.Vision.Undistort(ImageSize=nil, Alpha=0, FocalLength(X=1000, Y=1000), PrincipalPoint(X=840, Y=630), RadialDistortion(X=-0.3, Y=0, Z=0), TangentialDistortion(X=0, Y=0))
            -> Bonsai.Vision.Resize(Size(Width=1440, Height=1080), Interpolation=Linear) => #4
            #0 -> MemberSelector(Selector=ChunkData) => #5
            #4, #5 -> Zip
            -> CreateVideoDataFrame
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=ImagePreProcessingEvents, Description="The name of the shared subject", Category=Subject)) => #3
        #2, #3 -> PublishSubject ProcessedImage => #4
        Source2=#4 -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject ProcessedImage => #1
        ExternalizedMapping(WholeImageThreshold, NestThreshold) => #2
        #1, #2 -> GroupWorkflow BlobTracking => #3
            WorkflowInput Source1 => #0
            ExternalizedMapping(WholeImageThreshold, NestThreshold) => #1
            #0, #1 -> Bonsai.Harp.ConvertTimestamped BinaryRegions
                WorkflowInput Source1
                -> MemberSelector(Selector=Image) => #1
                -> Bonsai.Vision.MaskPolygon => #2
                  Regions(ArrayOfPoint(Point(X=1254, Y=26), Point(X=317, Y=15), Point(X=300, Y=548), Point(X=302, Y=1066), Point(X=1281, Y=1067)))
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=WholeImageThreshold)) => #3
                #2, #3 -> Bonsai.Vision.Threshold(ThresholdValue=61, MaxValue=255, ThresholdType=BinaryInv) => #4
                #1 -> Bonsai.Vision.MaskPolygon => #5
                  Regions
                    ArrayOfPoint
                      Point(X=1064, Y=876)
                      Point(X=1084, Y=860)
                      Point(X=1091, Y=840)
                      Point(X=1092, Y=807)
                      Point(X=1088, Y=797)
                      Point(X=1068, Y=776)
                      Point(X=1045, Y=764)
                      Point(X=1014, Y=779)
                      Point(X=989, Y=799)
                      Point(X=985, Y=833)
                      Point(X=989, Y=867)
                      Point(X=1013, Y=881)
                      Point(X=1038, Y=889)
                    ArrayOfPoint
                      Point(X=602, Y=252)
                      Point(X=602, Y=191)
                      Point(X=574, Y=174)
                      Point(X=550, Y=168)
                      Point(X=522, Y=180)
                      Point(X=497, Y=197)
                      Point(X=491, Y=221)
                      Point(X=493, Y=250)
                      Point(X=512, Y=267)
                      Point(X=547, Y=284)
                    ArrayOfPoint
                      Point(X=572, Y=764)
                      Point(X=598, Y=743)
                      Point(X=601, Y=712)
                      Point(X=601, Y=680)
                      Point(X=565, Y=652)
                      Point(X=541, Y=645)
                      Point(X=513, Y=658)
                      Point(X=488, Y=675)
                      Point(X=482, Y=699)
                      Point(X=487, Y=740)
                      Point(X=514, Y=761)
                      Point(X=546, Y=774)
                    ArrayOfPoint
                      Point(X=1074, Y=391)
                      Point(X=1086, Y=373)
                      Point(X=1088, Y=348)
                      Point(X=1082, Y=318)
                      Point(X=1056, Y=300)
                      Point(X=1031, Y=287)
                      Point(X=1010, Y=293)
                      Point(X=981, Y=311)
                      Point(X=978, Y=332)
                      Point(X=982, Y=368)
                      Point(X=1012, Y=392)
                      Point(X=1042, Y=407)
                    ArrayOfPoint(Point(X=791, Y=786), Point(X=791, Y=786), Point(X=791, Y=786), Point(X=791, Y=786))
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=NestThreshold)) => #6
                #5, #6 -> Bonsai.Vision.Threshold(ThresholdValue=132, MaxValue=255, ThresholdType=BinaryInv) => #7
                #1 -> Bonsai.Vision.MaskPolygon => #8
                  Regions
                    ArrayOfPoint
                      Point(X=335, Y=391)
                      Point(X=330, Y=552)
                      Point(X=329, Y=722)
                      Point(X=330, Y=967)
                      Point(X=328, Y=1046)
                      Point(X=462, Y=1040)
                      Point(X=614, Y=1042)
                      Point(X=845, Y=1040)
                      Point(X=967, Y=1037)
                      Point(X=1081, Y=1037)
                      Point(X=1166, Y=1038)
                      Point(X=1214, Y=1042)
                      Point(X=1259, Y=1048)
                      Point(X=1252, Y=1000)
                      Point(X=1247, Y=929)
                      Point(X=1244, Y=788)
                      Point(X=1242, Y=612)
                      Point(X=1241, Y=525)
                      Point(X=1239, Y=436)
                      Point(X=1231, Y=277)
                      Point(X=1228, Y=181)
                      Point(X=1228, Y=44)
                      Point(X=1150, Y=47)
                      Point(X=1043, Y=44)
                      Point(X=701, Y=36)
                      Point(X=349, Y=41)
                  MaskType=ToZero
                  FillValue(Val0=255, Val1=0, Val2=0, Val3=0)
                ExternalizedMapping(ThresholdValue(DisplayName=InArenaThreshold)) => #9
                #8, #9 -> Bonsai.Vision.Threshold(ThresholdValue=104, MaxValue=255, ThresholdType=BinaryInv) => #10
                #4, #7, #10 -> Zip
                -> Add
                -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.SortBinaryRegions
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=TrackingEvents)) => #4
        #3, #4 -> PublishSubject TrackingTop
        -> WorkflowOutput

    GroupWorkflow BinaryRegionsTracking
        ExternalizedMapping(Value(DisplayName=NumberOfTrackingSubjects))
        -> IntProperty(Value=1)
        -> BehaviorSubject NumberOfTrackingSubjects

        ExternalizedMapping(Name(DisplayName=TrackingEvents, Description=Contours, Category=Subject))
        -> SubscribeSubject TrackingTop
        -> Bonsai.Harp.ConvertTimestamped BinaryRegionsTracking
            WorkflowInput Source1 => #0
            SubscribeSubject NumberOfTrackingSubjects
            -> PropertyMapping(ExpectedNumberOfConnectedComponents) => #2
            #0, #2 -> BinaryRegionsTracking(ExpectedNumberOfConnectedComponents=1)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition NotNull => #6
          Expression: it.Value != null
        ExternalizedMapping(Name(DisplayName=BinaryRegionsEvents, Description="The name of the shared subject with binary regions tracking", Category=Subject)) => #7
        #6, #7 -> PublishSubject "BinaryRegionsTracking (Subject)"
        -> SelectMany IndexConnectedComponents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.DistConnCompCollection.ConnCompCollection)
            -> Concat => #2
            #0 -> MemberSelector(Selector=Value) => #3
            #2, #3 -> WithLatestFrom => #4
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> ElementIndex
            -> WorkflowOutput
        -> GroupBy(KeySelector=Index, ElementSelector=Value) => #10
        ExternalizedMapping(Name(DisplayName=BinaryRegionsObservable, Category=Subject)) => #11
        #10, #11 -> ReplaySubject BinaryRegionsObservable(BufferSize=nil) => #12
        Source2=#12 -> WorkflowOutput

    GroupWorkflow MovementBehaviorTracking
        ExternalizedMapping(Name(DisplayName=ObservableBinaryRegions, Category=Subject))
        -> SubscribeSubject BinaryRegionsObservable => #1
        ExternalizedMapping(VelocityThreshold) => #2
        #1, #2 -> SelectMany MovementBehaviorTracking => #3
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject source
            -> Merge => #4
            ExternalizedMapping(VelocityThreshold) => #5
            #4, #5 -> GroupWorkflow HeadTailTracking => #6
                WorkflowInput Source1 => #0
                ExternalizedMapping(VelocityThreshold) => #1
                #0, #1 -> Bonsai.Harp.ConvertTimestamped HeadTailVelocity
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #2
                    Range(Start=0, Count=10)
                    -> Bonsai.Vision.CreatePoint2f(X=NaN, Y=NaN) => #4
                    #0 -> MemberSelector(Selector=Item1.Centroid) => #5
                    #4, #5 -> Merge
                    -> BufferCount(Count=10, Skip=1) => #7
                    #2, #7 -> WithLatestFrom => #8
                    ExternalizedMapping(VelocityThreshold) => #9
                    #8, #9 -> HeadTailVelocity(VelocityThreshold=10) => #10
                    #0 -> MemberSelector(Selector=Item1) => #11
                    #10, #11 -> Zip
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject source
            -> MemberSelector(Selector=Key) => #8
            #6, #8 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=HeadTailObservable, Category=Subject)) => #4
        #3, #4 -> ReplaySubject HeadTailObservable(BufferSize=nil)

    GroupWorkflow LoomAngle
        ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
        -> SubscribeSubject HeadTailObservable => #1
        ExternalizedMapping(X, Y) => #2
        #1, #2 -> SelectMany LoomAngle
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> MemberSelector(Selector=Key)
            -> AsyncSubject Id
            #1 -> AsyncSubject Source

            SubscribeSubject Source
            -> Merge => #6
            ExternalizedMapping(X, Y) => #7
            #6, #7 -> Bonsai.Harp.ConvertTimestamped => #8
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1.Heading,Item1.Centroid") => #1
                -> MemberSelector(Selector=Item1) => #2
                #1 -> MemberSelector(Selector=Item2) => #3
                ExternalizedMapping(X(Category=LoomPosition), Y(Category=LoomPosition))
                -> Bonsai.Vision.CreatePoint2f(X=872, Y=488) => #5
                #3, #5 -> WithLatestFrom
                -> AngleCalculator => #7
                #2, #7 -> Zip
                -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Math.PI-Math.ABS(Math.ABS(it.Item1 - it.Item2) - Math.PI)
                -> Subtract
                -> NormalizeAngle
                -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((it+Math.PI)%(2*Math.PI))-Math.PI
                -> WorkflowOutput
            SubscribeSubject Id => #9
            #8, #9 -> WithLatestFrom
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1) => #4
        ExternalizedMapping(Name(DisplayName=LoomAngle, Category=Subject)) => #5
        #4, #5 -> ReplaySubject LoomAngleObservable(BufferSize=nil)

    SubscribeSubject ProcessedImage
    -> MemberSelector(Selector=Value.Image)
    -> GroupWorkflow LoomRegion
        ExternalizedMapping(HeadTail, RegionOfInterest1)
        -> Defer
            ExternalizedMapping(Name(DisplayName=HeadTail, Category=Subject))
            -> SubscribeSubject HeadTailObservable => #1
            ExternalizedMapping(RegionOfInterest1) => #2
            #1, #2 -> SelectMany LoomRegion
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject Id
                #1 -> AsyncSubject Source

                SubscribeSubject Source
                -> Merge
                -> Bonsai.Harp.ConvertTimestamped => #7
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.Head)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=RegionOfInterest1))
                -> PropertySource<Bonsai.Vision.CropPolygon,OpenCV.Net.Point[][]>
                  MemberName=Regions
                  Value
                    ArrayOfPoint
                      Point(X=800, Y=498)
                      Point(X=802, Y=508)
                      Point(X=803, Y=519)
                      Point(X=808, Y=529)
                      Point(X=814, Y=538)
                      Point(X=821, Y=545)
                      Point(X=829, Y=551)
                      Point(X=838, Y=556)
                      Point(X=848, Y=559)
                      Point(X=859, Y=560)
                      Point(X=868, Y=559)
                      Point(X=878, Y=556)
                      Point(X=887, Y=551)
                      Point(X=895, Y=545)
                      Point(X=902, Y=538)
                      Point(X=908, Y=529)
                      Point(X=913, Y=519)
                      Point(X=914, Y=508)
                      Point(X=917, Y=498)
                      Point(X=914, Y=486)
                      Point(X=913, Y=475)
                      Point(X=908, Y=466)
                      Point(X=902, Y=456)
                      Point(X=895, Y=449)
                      Point(X=887, Y=443)
                      Point(X=878, Y=438)
                      Point(X=868, Y=435)
                      Point(X=859, Y=435)
                      Point(X=848, Y=435)
                      Point(X=838, Y=438)
                      Point(X=829, Y=443)
                      Point(X=821, Y=449)
                      Point(X=814, Y=456)
                      Point(X=808, Y=466)
                      Point(X=803, Y=475)
                      Point(X=802, Y=486)
                      Point(X=800, Y=498)
                      Point(X=1065, Y=461)
                      Point(X=1069, Y=511)
                      Point(X=1065, Y=560)
                      Point(X=1056, Y=607)
                      Point(X=1040, Y=650)
                      Point(X=1019, Y=690)
                      Point(X=994, Y=725)
                      Point(X=963, Y=753)
                      Point(X=929, Y=774)
                      Point(X=894, Y=786)
                      Point(X=857, Y=790)
                      Point(X=820, Y=786)
                      Point(X=785, Y=774)
                      Point(X=751, Y=753)
                      Point(X=720, Y=725)
                      Point(X=695, Y=690)
                      Point(X=674, Y=650)
                      Point(X=658, Y=607)
                      Point(X=649, Y=560)
                      Point(X=646, Y=511)
                      Point(X=649, Y=461)
                      Point(X=658, Y=414)
                      Point(X=674, Y=371)
                      Point(X=695, Y=331)
                      Point(X=720, Y=296)
                      Point(X=751, Y=268)
                      Point(X=785, Y=247)
                      Point(X=820, Y=235)
                      Point(X=857, Y=231)
                      Point(X=894, Y=235)
                      Point(X=929, Y=247)
                      Point(X=963, Y=268)
                      Point(X=994, Y=296)
                      Point(X=1019, Y=331)
                      Point(X=1040, Y=371)
                      Point(X=1056, Y=414)
                      Point(X=1065, Y=461)
                -> PropertyMapping(Regions) => #10
                #7, #10 -> Aeon.Acquisition.RegionContainsPoint => #11
                  Regions
                    ArrayOfPoint
                      Point(X=800, Y=498)
                      Point(X=802, Y=508)
                      Point(X=803, Y=519)
                      Point(X=808, Y=529)
                      Point(X=814, Y=538)
                      Point(X=821, Y=545)
                      Point(X=829, Y=551)
                      Point(X=838, Y=556)
                      Point(X=848, Y=559)
                      Point(X=859, Y=560)
                      Point(X=868, Y=559)
                      Point(X=878, Y=556)
                      Point(X=887, Y=551)
                      Point(X=895, Y=545)
                      Point(X=902, Y=538)
                      Point(X=908, Y=529)
                      Point(X=913, Y=519)
                      Point(X=914, Y=508)
                      Point(X=917, Y=498)
                      Point(X=914, Y=486)
                      Point(X=913, Y=475)
                      Point(X=908, Y=466)
                      Point(X=902, Y=456)
                      Point(X=895, Y=449)
                      Point(X=887, Y=443)
                      Point(X=878, Y=438)
                      Point(X=868, Y=435)
                      Point(X=859, Y=435)
                      Point(X=848, Y=435)
                      Point(X=838, Y=438)
                      Point(X=829, Y=443)
                      Point(X=821, Y=449)
                      Point(X=814, Y=456)
                      Point(X=808, Y=466)
                      Point(X=803, Y=475)
                      Point(X=802, Y=486)
                      Point(X=800, Y=498)
                      Point(X=1065, Y=461)
                      Point(X=1069, Y=511)
                      Point(X=1065, Y=560)
                      Point(X=1056, Y=607)
                      Point(X=1040, Y=650)
                      Point(X=1019, Y=690)
                      Point(X=994, Y=725)
                      Point(X=963, Y=753)
                      Point(X=929, Y=774)
                      Point(X=894, Y=786)
                      Point(X=857, Y=790)
                      Point(X=820, Y=786)
                      Point(X=785, Y=774)
                      Point(X=751, Y=753)
                      Point(X=720, Y=725)
                      Point(X=695, Y=690)
                      Point(X=674, Y=650)
                      Point(X=658, Y=607)
                      Point(X=649, Y=560)
                      Point(X=646, Y=511)
                      Point(X=649, Y=461)
                      Point(X=658, Y=414)
                      Point(X=674, Y=371)
                      Point(X=695, Y=331)
                      Point(X=720, Y=296)
                      Point(X=751, Y=268)
                      Point(X=785, Y=247)
                      Point(X=820, Y=235)
                      Point(X=857, Y=231)
                      Point(X=894, Y=235)
                      Point(X=929, Y=247)
                      Point(X=963, Y=268)
                      Point(X=994, Y=296)
                      Point(X=1019, Y=331)
                      Point(X=1040, Y=371)
                      Point(X=1056, Y=414)
                      Point(X=1065, Y=461)
                -> Condition Inside => #12
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                #11 -> Condition Outside => #13
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> BitwiseNot
                    -> WorkflowOutput
                #12, #13 -> WithLatestFrom => #14
                #12 -> MemberSelector(Selector=Seconds) => #15
                #14, #15 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> Bonsai.Harp.ConvertTimestamped => #18
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1.Seconds) => #1
                    #0 -> MemberSelector(Selector=Item2.Seconds) => #2
                    #1, #2 -> WithLatestFrom
                    -> Subtract
                    -> WorkflowOutput
                SubscribeSubject Id => #19
                #18, #19 -> WithLatestFrom
                -> WorkflowOutput
            -> WorkflowOutput
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1) => #2
        ExternalizedMapping(Name(DisplayName=LoomRegion, Category=Subject)) => #3
        #2, #3 -> ReplaySubject LoomRegionObservable(BufferSize=nil)

        WorkflowInput Source1

GroupWorkflow HeadTail
    IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=HeadTailObservable, ID=0)

    SubscribeSubject ProcessedImage => #1
    ExternalizedMapping(Interval(DisplayName=VisualizerInterval)) => #2
    #1, #2 -> SampleInterval(Interval=PT0.05S) => #3
    SubscribeSubject NumberOfTrackingSubjects
    -> PropertyMapping(NumberOfTrackingElements) => #5
    #3, #5 -> SelectMany TrackingVisualizer
        Disable WorkflowInput Source1 => #0
        ExternalizedMapping(Name(DisplayName=ProcessedImage, Category=Subject)) => #1
        -> SubscribeSubject ProcessedImage => #2
        #0, #2 -> MemberSelector(Selector=Value.Image)
        -> GroupWorkflow CreateCanvas => #4
            WorkflowInput Source1
            -> InputMapping(Size(Selector=Size))
            -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1440, Height=1080), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0))
            -> WorkflowOutput
        #4, #1 -> GroupWorkflow AddImage
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name)
            -> SubscribeSubject ProcessedImage => #2
            -> MemberSelector(Selector=Value.Image)
            -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #4
            #2 -> MemberSelector(Selector=Value.Image.Size)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
              Expression: new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)
            #0, #4, #6 -> Zip
            -> InputMapping(Selector=Item1, Image(Selector=Item2), Destination(Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height"))
            -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=1440, Height=1080), Interpolation=Linear)
            -> WorkflowOutput
        -> Take(Count=1)
        -> BehaviorSubject Canvas

        ExternalizedMapping(Name)
        -> SubscribeSubject HeadTailObservable => #9
        ExternalizedMapping(Count(DisplayName=NumberOfTrackingElements)) => #10
        #9, #10 -> Take(Count=1)
        -> CreateObservable
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject Canvas => #3
            SubscribeSubject source
            -> Merge => #5
            #3, #5 -> Zip
            -> MemberSelector(Selector=Item1) => #7
            #5 -> PropertyMapping(Contour(Selector=Value.Item2.Contour)) => #8
            #7, #8 -> GroupWorkflow AddBlob => #9
                WorkflowInput Source1 => #0
                ExternalizedMapping(Contour) => #1
                #0, #1 -> Bonsai.Vision.Drawing.DrawContours(ExternalColor(Val0=255, Val1=0, Val2=0, Val3=255), HoleColor(Val0=0, Val1=0, Val2=0, Val3=0), MaxLevel=0, Thickness=1, LineType=Connected8)
                -> WorkflowOutput
            #5 -> MemberSelector(Selector=Value.Item1.Head)
            -> PropertyMapping(Center(Selector=it)) => #11
            #9, #11 -> Bonsai.Vision.Drawing.Circle(Center(X=712, Y=669), Radius=2, Color(Val0=0, Val1=0, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #12
            #5 -> MemberSelector(Selector=Value.Item2.Centroid)
            -> PropertyMapping(Center) => #14
            #12, #14 -> Bonsai.Vision.Drawing.Circle(Center(X=706, Y=674), Radius=2, Color(Val0=0, Val1=255, Val2=0, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #15
            #5 -> MemberSelector(Selector=Value.Item1.Tail)
            -> PropertyMapping(Center) => #17
            #15, #17 -> Bonsai.Vision.Drawing.Circle(Center(X=699, Y=679), Radius=2, Color(Val0=255, Val1=255, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0)
            -> Take(Count=1)
            -> MulticastSubject Canvas
            -> WorkflowOutput
        -> Concat
        -> TakeLast(Count=1)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    -> VisualizerMapping => #7
    IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=LoomAngleObservable, ID=0)
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it as LoomAngle
        )
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=LoomAngle, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #12
    IncludeWorkflow(Path=Extensions\MergeIGroupObservables.bonsai, IGroupObservableSubject=HeadTailObservable, ExpectedGroupCount=NumberOfTrackingSubjects)
    -> MemberSelector(Selector=Value.Item1.Item1.Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> VisualizerMapping => #17
    IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=HeadTailObservable, ID=0)
    -> MemberSelector(Selector=Value.Item1.Velocity)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          Math.SQRT(it.X*it.X + it.Y*it.Y) as Velocity
        )
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Velocity, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #22
    #7, #12, #17, #22 -> Bonsai.Gui.TableLayoutPanelBuilder Tracking(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=LoomRegionObservable, ID=0)
    -> MemberSelector(Selector=Value) => #26
    SubscribeSubject RegionTimeTreshold => #27
    #26, #27 -> WithLatestFrom => #28
    -> BehaviorSubject teste
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      ValueSelector="Item1,Item2"
      SymbolType=None
      LineWidth=1
      CurveSettings(CurveConfiguration(Label="", Color=LightGrey), CurveConfiguration(Color=#00C000))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping => #31
    IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=LoomAngleObservable, ID=0)
    -> MemberSelector(Selector=Value)
    -> Bonsai.Dsp.Abs => #34
    SubscribeSubject AngleTreshold
    -> PropertyMapping(Value) => #36
    #34, #36 -> LessThan(Operand=DoubleProperty(Value=2)) => #37
    #28, #37 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item2) => #1
        #0 -> MemberSelector(Selector=Item1)
        -> GreaterThan => #3
        #1, #3 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector=Item1.Item1)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=XCross, LineWidth=0, CurveSettings(CurveConfiguration(Color=Red)), Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #42
    #31, #42 -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder(ReverseX=false, ReverseY=false, Span=nil, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=nil, Max=nil)

GroupWorkflow TaskLogic
    ExternalizedMapping(Value(DisplayName=RegionTimeThreshold))
    -> DoubleProperty(Value=0)
    -> BehaviorSubject RegionTimeTreshold

    ExternalizedMapping(Value(DisplayName=AngleThreshold))
    -> DoubleProperty(Value=0)
    -> BehaviorSubject AngleTreshold

    SubscribeSubject LoomRegionObservable
    -> SelectMany => #7
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Source

        SubscribeSubject Source
        -> Merge
        -> MemberSelector(Selector=Value) => #5
        SubscribeSubject RegionTimeTreshold
        -> PropertyMapping(Value) => #7
        #5, #7 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> DistinctUntilChanged
        -> Condition => #10
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject AngleTreshold
        -> PropertyMapping(AngleThreshold) => #12
        #10, #7, #12 -> SelectMany
            SubscribeSubject Source
            -> MemberSelector(Selector=Key)
            -> PropertyMapping(ID) => #2
            -> IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=LoomRegionObservable, ID=0)
            -> GroupWorkflow Inegion
                WorkflowInput Source1
                -> WorkflowOutput
            -> MemberSelector(Selector=Value) => #5
            ExternalizedMapping(Value) => #6
            #5, #6 -> GreaterThan(Operand=DoubleProperty(Value=1))
            -> Condition => #8
                WorkflowInput Source1
                -> WorkflowOutput
            #2 -> IncludeWorkflow(Path=Extensions\GetObservableByKey.bonsai, IGroupObservableSubject=LoomAngleObservable, ID=0) => #9
            #8, #9 -> WithLatestFrom => #10
            ExternalizedMapping(AngleThreshold) => #11
            #10, #11 -> Condition AngleCondition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Value)
                -> Bonsai.Dsp.Abs => #2
                ExternalizedMapping(Value(DisplayName=AngleThreshold)) => #3
                #2, #3 -> LessThan(Operand=DoubleProperty(Value=3))
                -> WorkflowOutput
            -> Take(Count=1) => #13
            #5, #6 -> LessThan(Operand=DoubleProperty(Value=1))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #15 -> TakeUntil
            -> WorkflowOutput
        -> WorkflowOutput
    ExternalizedMapping(Probability) => #8
    #7, #8 -> GroupWorkflow Probability
        Bonsai.Numerics.CreateRandom(Seed=11010)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
        -> BehaviorSubject dist

        WorkflowInput Source1 => #3
        ExternalizedMapping(Probability) => #4
        #3, #4 -> SelectMany
            SubscribeSubject dist
            -> Bonsai.Numerics.Distributions.Sample => #1
            ExternalizedMapping(Value(DisplayName=Probability)) => #2
            #1, #2 -> LessThan(Operand=DoubleProperty(Value=0.2))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput

            WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
